[General settings]
name: Mixer Calibrator
version: 0.1
driver_path: Mixer_Calibrator
signal_generator: True

[Mode]
datatype: COMBO
def_value: Generate signal
show_in_measurement_dlg: True
combo_def_1: Generate signal
combo_def_2: Calibrate signal
group: General Settings

[Sample rate]
datatype: DOUBLE
unit: Hz
def_value: 2000000000.0
show_in_measurement_dlg: True
group: General Settings

[Q delay]
datatype: DOUBLE
unit: s
def_value: 0
show_in_measurement_dlg: True
group: IQ calibration

[Phase skew]
datatype: DOUBLE
unit: deg
def_value: 0
show_in_measurement_dlg: True
group: IQ calibration

[Gain imbalance]
datatype: DOUBLE
unit: dB
def_value: 0
show_in_measurement_dlg: True
group: IQ calibration

[Calibrate offset]
datatype: BOOLEAN
def_value: False
tooltip: Not recommended. Should use hardware offset.
group: IQ calibration

[I offset]
datatype: DOUBLE
unit: V
def_value: 0
show_in_measurement_dlg: True
state_quant: Calibrate offset
state_value: True
group: IQ calibration

[Q offset]
datatype: DOUBLE
unit: V
def_value: 0
show_in_measurement_dlg: True
state_quant: Calibrate offset
state_value: True
group: IQ calibration

[Frequency]
datatype: DOUBLE
unit: Hz
def_value: 100000000.0
show_in_measurement_dlg: True
group: Signal generation

[Amplitude]
datatype: DOUBLE
unit: V
def_value: 0.5
show_in_measurement_dlg: True
group: Signal generation

[Number of points]
datatype: DOUBLE
def_value: 10000.0
group: Signal generation

[Swap IQ]
datatype: BOOLEAN
def_value: False
group: Signal generation

[Waveform in - I]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
group: Signal

[Waveform in - Q]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
group: Signal

[Waveform out - I]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
group: Signal

[Waveform out - Q]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
group: Signal

