[General settings]
name: Multi-Qubit Pulse Generator Custom
version: 1.9.0
driver_path: MultiQubit_PulseGenerator_Custom
signal_generator: True
signal_analyzer: True

[Sequence]
datatype: COMBO
show_in_measurement_dlg: True
combo_def_1: Rabi
combo_def_2: CP/CPMG
combo_def_3: Pulse train
combo_def_4: 1-QB Randomized Benchmarking
combo_def_5: 2-QB Randomized Benchmarking
combo_def_6: Spin-locking
combo_def_7: Readout training
combo_def_8: Custom
combo_def_9: Generic
combo_def_10: 1-QB XEB
combo_def_11: 2-QB XEB
section: Sequence
group: Sequence

[Custom Python file]
datatype: PATH
tooltip: Python file with custom Sequence class. The class must be named "CustomSequence"
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Sequence

[Number of qubits]
datatype: COMBO
def_value: 2
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Sequence
group: Sequence

[Pulse spacing]
datatype: DOUBLE
unit: s
def_value: 2e-08
low_lim: 0
show_in_measurement_dlg: True
section: Sequence
group: Sequence

[Local XY control]
datatype: BOOLEAN
def_value: True
section: Sequence
group: Sequence

[Pulse]
datatype: COMBO
state_quant: Sequence
state_value_1: Pulse train
combo_def_1: Xp
combo_def_2: X2p
combo_def_3: Yp
combo_def_4: Y2p
combo_def_5: Zp
combo_def_6: Z2p
combo_def_7: CPh
section: Sequence
group: Pulse train

[# of pulses]
datatype: DOUBLE
def_value: 1
low_lim: 0
state_quant: Sequence
state_value_1: Pulse train
section: Sequence
group: Pulse train

[Alternate pulse direction]
datatype: BOOLEAN
def_value: False
state_quant: Sequence
state_value_1: Pulse train
section: Sequence
group: Pulse train

[# of pi pulses]
datatype: DOUBLE
def_value: 1
tooltip: Number of refocusing pulses. Set to -1 for generating pulse sequences for T1 experiments
low_lim: -1
state_quant: Sequence
state_value_1: CP/CPMG
section: Sequence
group: CPMG

[Sequence duration]
datatype: DOUBLE
unit: s
def_value: 1e-06
low_lim: 0
state_quant: Sequence
state_value_1: CP/CPMG
section: Sequence
group: CPMG

[Add pi pulses to Q]
datatype: BOOLEAN
def_value: True
state_quant: Sequence
state_value_1: CP/CPMG
section: Sequence
group: CPMG

[Edge-to-edge pulses]
datatype: BOOLEAN
def_value: False
state_quant: Sequence
state_value_1: CP/CPMG
section: Sequence
group: CPMG

[Add last pi/2 pulse to Q]
datatype: BOOLEAN
def_value: False
state_quant: Sequence
state_value_1: CP/CPMG
section: Sequence
group: CPMG

[Drive pulse duration]
datatype: DOUBLE
unit: s
def_value: 1e-06
low_lim: 0
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Drive pulse phase]
datatype: DOUBLE
unit: deg
def_value: 0
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Pulse sequence]
datatype: COMBO
def_value: SL-3
state_quant: Sequence
state_value_1: Spin-locking
combo_def_1: SL-3
combo_def_2: SL-5a
combo_def_3: SL-5b
section: Sequence
group: Spin-locking

[Drive pulse amplitude #1]
datatype: DOUBLE
unit: V
def_value: 0
tooltip: Drive pulse amplitude for qubit #1
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Drive pulse amplitude #2]
datatype: DOUBLE
unit: V
def_value: 0
tooltip: Drive pulse amplitude for qubit #2
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Drive pulse amplitude #3]
datatype: DOUBLE
unit: V
def_value: 0
tooltip: Drive pulse amplitude for qubit #3
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Drive pulse amplitude #4]
datatype: DOUBLE
unit: V
def_value: 0
tooltip: Drive pulse amplitude for qubit #4
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Drive pulse amplitude #5]
datatype: DOUBLE
unit: V
def_value: 0
tooltip: Drive pulse amplitude for qubit #5
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Drive pulse amplitude #6]
datatype: DOUBLE
unit: V
def_value: 0
tooltip: Drive pulse amplitude for qubit #6
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Drive pulse amplitude #7]
datatype: DOUBLE
unit: V
def_value: 0
tooltip: Drive pulse amplitude for qubit #7
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Drive pulse amplitude #8]
datatype: DOUBLE
unit: V
def_value: 0
tooltip: Drive pulse amplitude for qubit #8
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Drive pulse amplitude #9]
datatype: DOUBLE
unit: V
def_value: 0
tooltip: Drive pulse amplitude for qubit #9
state_quant: Sequence
state_value_1: Spin-locking
section: Sequence
group: Spin-locking

[Native 2-QB gate]
datatype: COMBO
def_value: CZ
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
combo_def_1: CZ
combo_def_2: iSWAP
section: Sequence
group: Randomized Benchmarking

[Use custom pulse]
datatype: BOOLEAN
def_value: False
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
section: Sequence
group: Randomized Benchmarking

[Add virtual Z]
datatype: BOOLEAN
def_value: True
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
state_value_2: 2-QB XEB
section: Sequence
group: Randomized Benchmarking

[Number of cycles]
datatype: DOUBLE
def_value: 17
low_lim: 0
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
state_value_2: 2-QB Randomized Benchmarking
state_value_3: 1-QB XEB
state_value_4: 2-QB XEB
section: Sequence
group: Randomized Benchmarking

[Randomize]
datatype: DOUBLE
def_value: 0
tooltip: Randomize gate sequence only if "Randomize" value changes or "Number of cycles" changes
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
state_value_2: 2-QB Randomized Benchmarking
state_value_3: 1-QB XEB
state_value_4: 2-QB XEB
section: Sequence
group: Randomized Benchmarking

[Write sequence as txt file]
datatype: BOOLEAN
def_value: False
tooltip: Save txt file for the sequence generated
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
state_value_2: 2-QB Randomized Benchmarking
state_value_3: 1-QB XEB
state_value_4: 2-QB XEB
section: Sequence
group: Randomized Benchmarking

[Output multiple sequences]
datatype: BOOLEAN
def_value: False
tooltip: Output multiple randomized gate sequences.
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
state_value_2: 2-QB Randomized Benchmarking
state_value_3: 1-QB XEB
state_value_4: 2-QB XEB
section: Sequence
group: Randomized Benchmarking

[Number of multiple sequences]
datatype: DOUBLE
def_value: 1
tooltip: Number of multiple randomize gate sequences to output.
low_lim: 1
show_in_measurement_dlg: True
state_quant: Output multiple sequences
state_value: True
section: Sequence
group: Randomized Benchmarking

[Align RB waveforms to end]
datatype: BOOLEAN
def_value: True
show_in_measurement_dlg: True
state_quant: Output multiple sequences
state_value: True
section: Sequence
group: Randomized Benchmarking

[Simultaneous pulses]
datatype: BOOLEAN
def_value: True
tooltip: If False, all pulses are separated in time.
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
state_value_2: 2-QB Randomized Benchmarking
state_value_3: 1-QB XEB
state_value_4: 2-QB XEB
section: Sequence
group: Randomized Benchmarking

[Qubits to Benchmark]
datatype: COMBO
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
state_value_2: 2-QB XEB
combo_def_1: 1-2
combo_def_2: 2-3
combo_def_3: 3-4
combo_def_4: 4-5
combo_def_5: 5-6
combo_def_6: 6-7
combo_def_7: 7-8
combo_def_8: 8-9
section: Sequence
group: Randomized Benchmarking

[Interleave 1-QB Gate]
datatype: BOOLEAN
def_value: False
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
section: Sequence
group: Randomized Benchmarking

[Interleaved 1-QB Gate]
datatype: COMBO
show_in_measurement_dlg: True
state_quant: Interleave 1-QB Gate
state_value: True
combo_def_1: Ref
combo_def_2: I
combo_def_3: Xp
combo_def_4: Xm
combo_def_5: X2p
combo_def_6: X2m
combo_def_7: Yp
combo_def_8: Ym
combo_def_9: Y2p
combo_def_10: Y2m
combo_def_11: VZp
combo_def_12: Zp
combo_def_13: Ilong
section: Sequence
group: Randomized Benchmarking

[Interleave 2-QB Gate]
datatype: BOOLEAN
def_value: False
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
section: Sequence
group: Randomized Benchmarking

[Interleaved 2-QB Gate]
datatype: COMBO
show_in_measurement_dlg: True
state_quant: Interleave 2-QB Gate
state_value: True
combo_def_1: Ref
combo_def_2: I
combo_def_3: CZ
combo_def_4: iSWAP
combo_def_5: CZEcho
section: Sequence
group: Randomized Benchmarking

[Add last pi pulse, 2QRB]
datatype: BOOLEAN
label: Add last pi pulse
def_value: False
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
section: Sequence
group: Randomized Benchmarking

[Pi pulse type, 2QRB]
datatype: COMBO
label: Pi pulse type
show_in_measurement_dlg: True
state_quant: Add last pi pulse, 2QRB
state_value: True
combo_def_1: II
combo_def_2: IX
combo_def_3: XI
combo_def_4: XX
section: Sequence
group: Randomized Benchmarking

[Find the cheapest recovery Clifford]
datatype: BOOLEAN
def_value: True
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
section: Sequence
group: Randomized Benchmarking

[Use a look-up table]
datatype: BOOLEAN
def_value: True
show_in_measurement_dlg: True
state_quant: Find the cheapest recovery Clifford
state_value: True
section: Sequence
group: Randomized Benchmarking

[File path of the look-up table]
datatype: PATH
show_in_measurement_dlg: True
state_quant: Use a look-up table
state_value: True
section: Sequence
group: Randomized Benchmarking

[Training type]
datatype: COMBO
def_value: All combinations
tooltip: For "All combinations", (Number of states)^(Number of qubits) training data sets are required.  For other options, (Number of states) training sets are required
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: Readout training
combo_def_1: Specific qubit
combo_def_2: All qubits at once
combo_def_3: All combinations
section: Sequence
group: Readout training

[Training, qubit]
datatype: DOUBLE
def_value: 1
low_lim: -1
show_in_measurement_dlg: True
state_quant: Training type
state_value_1: Specific qubit
section: Sequence
group: Readout training

[Training, input state]
datatype: DOUBLE
def_value: 0
low_lim: -1
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: Readout training
section: Sequence
group: Readout training

[Train all states at once]
datatype: BOOLEAN
def_value: False
tooltip: If checked, the driver will create training waveforms for all possible states
show_in_measurement_dlg: True
state_quant: Sequence
state_value_1: Readout training
section: Sequence
group: Readout training

[Parameter #1]
datatype: DOUBLE
def_value: 0
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Custom

[Parameter #2]
datatype: DOUBLE
def_value: 0
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Custom

[Parameter #3]
datatype: DOUBLE
def_value: 0
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Custom

[Parameter #4]
datatype: DOUBLE
def_value: 0
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Custom

[Parameter #5]
datatype: DOUBLE
def_value: 0
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Custom

[Parameter #6]
datatype: DOUBLE
def_value: 0
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Custom

[Parameter #7]
datatype: DOUBLE
def_value: 0
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Custom

[Parameter #8]
datatype: DOUBLE
def_value: 0
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Custom

[Parameter #9]
datatype: DOUBLE
def_value: 0
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Custom

[Parameter #10]
datatype: DOUBLE
def_value: 0
state_quant: Sequence
state_value_1: Custom
section: Sequence
group: Custom

[Generic - Number of cycles]
datatype: DOUBLE
label: Number of cycles
def_value: 1
low_lim: 0
section: Generic sequence
group: Generic sequence

[Generic - Number of pulses]
datatype: DOUBLE
label: Number of cycled pulses
def_value: 1
low_lim: 0
high_lim: 10
section: Generic sequence
group: Generic sequence

[Generic - Number of pre-pulse]
datatype: DOUBLE
label: Number of pre-pulse
def_value: 0
low_lim: 0
high_lim: 5
section: Generic sequence
group: Generic sequence

[Generic - Number of post-pulse]
datatype: DOUBLE
label: Number of post-pulse
def_value: 0
low_lim: 0
high_lim: 5
section: Generic sequence
group: Generic sequence

[Generic - Pre-cycle spacing type]
datatype: COMBO
label: Pre-cycle spacing type
combo_def_1: Start-Start
combo_def_2: End-Start
section: Generic sequence
group: Generic sequence

[Generic - Pre-cycle spacing]
datatype: DOUBLE
label: Pre-cycle spacing
unit: s
def_value: 1e-07
tooltip: Time between end of pre-pulse and first cycled pulse
section: Generic sequence
group: Generic sequence

[Generic - Cycle spacing type]
datatype: COMBO
label: Cycle spacing type
combo_def_1: Start-Start
combo_def_2: End-Start
section: Generic sequence
group: Generic sequence

[Generic - Cycle spacing]
datatype: DOUBLE
label: Cycle spacing
unit: s
def_value: 1e-07
tooltip: Time between cycled pulse sequence
section: Generic sequence
group: Generic sequence

[Generic - Post-cycle spacing type]
datatype: COMBO
label: Post-cycle spacing type
combo_def_1: Start-Start
combo_def_2: End-Start
section: Generic sequence
group: Generic sequence

[Generic - Post-cycle spacing]
datatype: DOUBLE
label: Post-cycle spacing
unit: s
def_value: 1e-07
tooltip: Time between end of last cycled pulse and post-pulse
section: Generic sequence
group: Generic sequence

[Generic - Cycled pulse #1 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Cycled pulse #1 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Cycled pulse #1 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Cycled pulse #1 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Cycled pulse #1 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Cycled pulse #1 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Cycled pulse #1 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Cycled pulse #1 - Net zero
state_value: True
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Cycled pulse #1 - Add to line
state_value_1: XY
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Cycled pulse #1 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #1 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Cycled pulse #1 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #1

[Generic - Cycled pulse #2 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Cycled pulse #2 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Cycled pulse #2 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Cycled pulse #2 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Cycled pulse #2 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Cycled pulse #2 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Cycled pulse #2 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Cycled pulse #2 - Net zero
state_value: True
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Cycled pulse #2 - Add to line
state_value_1: XY
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Cycled pulse #2 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #2 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Cycled pulse #2 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #2

[Generic - Cycled pulse #3 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Cycled pulse #3 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Cycled pulse #3 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Cycled pulse #3 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Cycled pulse #3 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Cycled pulse #3 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Cycled pulse #3 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Cycled pulse #3 - Net zero
state_value: True
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Cycled pulse #3 - Add to line
state_value_1: XY
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Cycled pulse #3 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #3 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Cycled pulse #3 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #3

[Generic - Cycled pulse #4 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Cycled pulse #4 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Cycled pulse #4 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Cycled pulse #4 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Cycled pulse #4 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Cycled pulse #4 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Cycled pulse #4 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Cycled pulse #4 - Net zero
state_value: True
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Cycled pulse #4 - Add to line
state_value_1: XY
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Cycled pulse #4 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #4 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Cycled pulse #4 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #4

[Generic - Cycled pulse #5 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Cycled pulse #5 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Cycled pulse #5 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Cycled pulse #5 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Cycled pulse #5 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Cycled pulse #5 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Cycled pulse #5 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Cycled pulse #5 - Net zero
state_value: True
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Cycled pulse #5 - Add to line
state_value_1: XY
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Cycled pulse #5 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #5 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Cycled pulse #5 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #5

[Generic - Cycled pulse #6 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Cycled pulse #6 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Cycled pulse #6 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Cycled pulse #6 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Cycled pulse #6 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Cycled pulse #6 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Cycled pulse #6 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Cycled pulse #6 - Net zero
state_value: True
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Cycled pulse #6 - Add to line
state_value_1: XY
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Cycled pulse #6 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #6 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Cycled pulse #6 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #6

[Generic - Cycled pulse #7 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Cycled pulse #7 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Cycled pulse #7 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Cycled pulse #7 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Cycled pulse #7 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Cycled pulse #7 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Cycled pulse #7 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Cycled pulse #7 - Net zero
state_value: True
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Cycled pulse #7 - Add to line
state_value_1: XY
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Cycled pulse #7 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #7 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Cycled pulse #7 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #7

[Generic - Cycled pulse #8 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Cycled pulse #8 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Cycled pulse #8 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Cycled pulse #8 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Cycled pulse #8 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Cycled pulse #8 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Cycled pulse #8 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Cycled pulse #8 - Net zero
state_value: True
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Cycled pulse #8 - Add to line
state_value_1: XY
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Cycled pulse #8 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #8 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Cycled pulse #8 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #8

[Generic - Cycled pulse #9 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Cycled pulse #9 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Cycled pulse #9 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Cycled pulse #9 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Cycled pulse #9 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Cycled pulse #9 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Cycled pulse #9 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Cycled pulse #9 - Net zero
state_value: True
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Cycled pulse #9 - Add to line
state_value_1: XY
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Cycled pulse #9 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #9 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Cycled pulse #9 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #9

[Generic - Cycled pulse #10 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Cycled pulse #10 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Cycled pulse #10 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Cycled pulse #10 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Cycled pulse #10 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Cycled pulse #10 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Cycled pulse #10 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Cycled pulse #10 - Net zero
state_value: True
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Cycled pulse #10 - Add to line
state_value_1: XY
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Cycled pulse #10 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #10

[Generic - Cycled pulse #10 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Cycled pulse #10 - Use DRAG
state_value: True
section: Generic sequence
group: Cycled pulse #10

[Generic - Pre pulse #1 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Pre pulse #1 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Pre pulse #1 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Pre pulse #1 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Pre pulse #1 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Pre pulse #1 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Pre pulse #1 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Pre pulse #1 - Net zero
state_value: True
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Pre pulse #1 - Add to line
state_value_1: XY
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Pre pulse #1 - Use DRAG
state_value: True
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #1 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Pre pulse #1 - Use DRAG
state_value: True
section: Generic sequence
group: Pre pulse #1

[Generic - Pre pulse #2 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Pre pulse #2 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Pre pulse #2 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Pre pulse #2 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Pre pulse #2 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Pre pulse #2 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Pre pulse #2 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Pre pulse #2 - Net zero
state_value: True
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Pre pulse #2 - Add to line
state_value_1: XY
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Pre pulse #2 - Use DRAG
state_value: True
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #2 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Pre pulse #2 - Use DRAG
state_value: True
section: Generic sequence
group: Pre pulse #2

[Generic - Pre pulse #3 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Pre pulse #3 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Pre pulse #3 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Pre pulse #3 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Pre pulse #3 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Pre pulse #3 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Pre pulse #3 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Pre pulse #3 - Net zero
state_value: True
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Pre pulse #3 - Add to line
state_value_1: XY
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Pre pulse #3 - Use DRAG
state_value: True
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #3 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Pre pulse #3 - Use DRAG
state_value: True
section: Generic sequence
group: Pre pulse #3

[Generic - Pre pulse #4 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Pre pulse #4 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Pre pulse #4 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Pre pulse #4 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Pre pulse #4 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Pre pulse #4 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Pre pulse #4 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Pre pulse #4 - Net zero
state_value: True
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Pre pulse #4 - Add to line
state_value_1: XY
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Pre pulse #4 - Use DRAG
state_value: True
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #4 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Pre pulse #4 - Use DRAG
state_value: True
section: Generic sequence
group: Pre pulse #4

[Generic - Pre pulse #5 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Pre pulse #5 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Pre pulse #5 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Pre pulse #5 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Pre pulse #5 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Pre pulse #5 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Pre pulse #5 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Pre pulse #5 - Net zero
state_value: True
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Pre pulse #5 - Add to line
state_value_1: XY
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Pre pulse #5 - Use DRAG
state_value: True
section: Generic sequence
group: Pre pulse #5

[Generic - Pre pulse #5 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Pre pulse #5 - Use DRAG
state_value: True
section: Generic sequence
group: Pre pulse #5

[Generic - Post pulse #1 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Post pulse #1 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Post pulse #1 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Post pulse #1 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Post pulse #1 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Post pulse #1 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Post pulse #1 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Post pulse #1 - Net zero
state_value: True
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Post pulse #1 - Add to line
state_value_1: XY
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Post pulse #1 - Use DRAG
state_value: True
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #1 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Post pulse #1 - Use DRAG
state_value: True
section: Generic sequence
group: Post pulse #1

[Generic - Post pulse #2 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Post pulse #2 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Post pulse #2 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Post pulse #2 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Post pulse #2 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Post pulse #2 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Post pulse #2 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Post pulse #2 - Net zero
state_value: True
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Post pulse #2 - Add to line
state_value_1: XY
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Post pulse #2 - Use DRAG
state_value: True
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #2 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Post pulse #2 - Use DRAG
state_value: True
section: Generic sequence
group: Post pulse #2

[Generic - Post pulse #3 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Post pulse #3 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Post pulse #3 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Post pulse #3 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Post pulse #3 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Post pulse #3 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Post pulse #3 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Post pulse #3 - Net zero
state_value: True
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Post pulse #3 - Add to line
state_value_1: XY
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Post pulse #3 - Use DRAG
state_value: True
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #3 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Post pulse #3 - Use DRAG
state_value: True
section: Generic sequence
group: Post pulse #3

[Generic - Post pulse #4 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Post pulse #4 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Post pulse #4 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Post pulse #4 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Post pulse #4 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Post pulse #4 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Post pulse #4 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Post pulse #4 - Net zero
state_value: True
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Post pulse #4 - Add to line
state_value_1: XY
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Post pulse #4 - Use DRAG
state_value: True
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #4 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Post pulse #4 - Use DRAG
state_value: True
section: Generic sequence
group: Post pulse #4

[Generic - Post pulse #5 - Copy]
datatype: BUTTON
label: Copy as template
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Paste]
datatype: BUTTON
label: Use template
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Pulse timing]
datatype: COMBO
label: Pulse timing
combo_def_1: Default
combo_def_2: Absolute
combo_def_3: Relative
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Pulse timing reference]
datatype: COMBO
label: Relative to previous pulse's
state_quant: Generic - Post pulse #5 - Pulse timing
state_value_1: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
state_quant: Generic - Post pulse #5 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Pulse timing time]
datatype: DOUBLE
label: Time
unit: s
def_value: 1e-07
tooltip: Absolute or relative time
state_quant: Generic - Post pulse #5 - Pulse timing
state_value_1: Absolute
state_value_2: Relative
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Generic - Post pulse #5 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Generic - Post pulse #5 - Pulse type
state_value_1: Cosine
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Generic - Post pulse #5 - Pulse type
state_value_1: Gaussian
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Generic - Post pulse #5 - Net zero
state_value: True
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Generic - Post pulse #5 - Add to line
state_value_1: XY
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Generic - Post pulse #5 - Use DRAG
state_value: True
section: Generic sequence
group: Post pulse #5

[Generic - Post pulse #5 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Generic - Post pulse #5 - Use DRAG
state_value: True
section: Generic sequence
group: Post pulse #5

[Test pulse - #1 - Enable]
datatype: BOOLEAN
label: Enable
def_value: False
section: Test pulse
group: #1

[Test pulse - #1 - Copy]
datatype: BUTTON
label: Copy as template
section: Test pulse
group: #1

[Test pulse - #1 - Paste]
datatype: BUTTON
label: Use template
section: Test pulse
group: #1

[Test pulse - #1 - Add to qubit]
datatype: COMBO
label: Add to qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Test pulse
group: #1

[Test pulse - #1 - Add to line]
datatype: COMBO
label: Add to line
combo_def_1: XY
combo_def_2: Z
section: Test pulse
group: #1

[Test pulse - #1 - Pulse timing locate]
datatype: COMBO
label: Set this pulse's
combo_def_1: Start
combo_def_2: Center
combo_def_3: End
section: Test pulse
group: #1

[Test pulse - #1 - Pulse timing time]
datatype: DOUBLE
label: Absolute time
unit: s
def_value: 1e-07
tooltip: Absolute time
section: Test pulse
group: #1

[Test pulse - #1 - Pulse type]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: Test pulse
group: #1

[Test pulse - #1 - Truncation range]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Test pulse - #1 - Pulse type
state_value_1: Gaussian
section: Test pulse
group: #1

[Test pulse - #1 - Half cosine]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Test pulse - #1 - Pulse type
state_value_1: Cosine
section: Test pulse
group: #1

[Test pulse - #1 - Start at zero]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Test pulse - #1 - Pulse type
state_value_1: Gaussian
section: Test pulse
group: #1

[Test pulse - #1 - Net zero]
datatype: BOOLEAN
label: Net zero
def_value: False
section: Test pulse
group: #1

[Test pulse - #1 - Net zero delay]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Test pulse - #1 - Net zero
state_value: True
section: Test pulse
group: #1

[Test pulse - #1 - Use DRAG]
datatype: BOOLEAN
label: Use DRAG
def_value: False
state_quant: Test pulse - #1 - Add to line
state_value_1: XY
section: Test pulse
group: #1

[Test pulse - #1 - Amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
section: Test pulse
group: #1

[Test pulse - #1 - Phase]
datatype: DOUBLE
label: Phase
unit: deg
def_value: 0
section: Test pulse
group: #1

[Test pulse - #1 - Width]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
section: Test pulse
group: #1

[Test pulse - #1 - Plateau]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
section: Test pulse
group: #1

[Test pulse - #1 - Frequency]
datatype: DOUBLE
label: Frequency
unit: Hz
section: Test pulse
group: #1

[Test pulse - #1 - DRAG scaling]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Test pulse - #1 - Use DRAG
state_value: True
section: Test pulse
group: #1

[Test pulse - #1 - DRAG frequency detuning]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Test pulse - #1 - Use DRAG
state_value: True
section: Test pulse
group: #1

[Sample rate]
datatype: DOUBLE
unit: Hz
def_value: 2500000000.0
show_in_measurement_dlg: True
section: Waveform
group: Waveform

[Trim waveform to sequence]
datatype: BOOLEAN
label: Adjust waveform to sequence length
def_value: True
tooltip: Automatically adjusts the number of points in the waveform
section: Waveform
group: Waveform

[Number of points]
datatype: DOUBLE
def_value: 240000.0
show_in_measurement_dlg: True
state_quant: Trim waveform to sequence
state_value: False
section: Waveform
group: Waveform

[Align pulses to end of waveform]
datatype: BOOLEAN
def_value: False
state_quant: Trim waveform to sequence
state_value: False
section: Waveform
group: Waveform

[First pulse delay]
datatype: DOUBLE
unit: s
def_value: 1e-07
section: Waveform
group: Delays

[Enable individual delay]
datatype: BOOLEAN
def_value: True
section: Waveform
group: Delays

[Qubit 1 XY Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 1 Z Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 2 XY Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 2 Z Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 3 XY Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 3 Z Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 4 XY Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 4 Z Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 5 XY Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 5 Z Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 6 XY Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 6 Z Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 7 XY Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 7 Z Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 8 XY Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 8 Z Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 9 XY Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Qubit 9 Z Delay]
datatype: DOUBLE
unit: s
def_value: 0
section: Waveform
group: Delays

[Pulse type]
datatype: COMBO
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: 1-QB gates XY
group: Pulse settings

[Truncation range]
datatype: DOUBLE
def_value: 3
tooltip: Truncate at ? σ
state_quant: Pulse type
state_value_1: Gaussian
section: 1-QB gates XY
group: Pulse settings

[Half cosine]
datatype: BOOLEAN
def_value: False
state_quant: Pulse type
state_value_1: Cosine
section: 1-QB gates XY
group: Pulse settings

[Start at zero]
datatype: BOOLEAN
def_value: False
state_quant: Pulse type
state_value_1: Gaussian
section: 1-QB gates XY
group: Pulse settings

[Use DRAG]
datatype: BOOLEAN
def_value: False
section: 1-QB gates XY
group: Pulse settings

[Uniform amplitude]
datatype: BOOLEAN
def_value: False
section: 1-QB gates XY
group: Pulse settings

[Amplitude]
datatype: DOUBLE
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude
state_value: True
section: 1-QB gates XY
group: Pulse settings

[Uniform pulse shape]
datatype: BOOLEAN
def_value: True
section: 1-QB gates XY
group: Pulse settings

[Width]
datatype: DOUBLE
unit: s
def_value: 1e-08
low_lim: 0
show_in_measurement_dlg: True
state_quant: Uniform pulse shape
state_value: True
section: 1-QB gates XY
group: Pulse settings

[Plateau]
datatype: DOUBLE
unit: s
def_value: 0
low_lim: 0
show_in_measurement_dlg: True
state_quant: Uniform pulse shape
state_value: True
section: 1-QB gates XY
group: Pulse settings

[Copy #1]
datatype: BUTTON
label: Copy as template
section: 1-QB gates XY
group: Qubit #1

[Paste #1]
datatype: BUTTON
label: Use template
section: 1-QB gates XY
group: Qubit #1

[Amplitude #1]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude
state_value: False
section: 1-QB gates XY
group: Qubit #1

[Width #1]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #1

[Plateau #1]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #1

[Frequency #1]
datatype: DOUBLE
label: Frequency
unit: Hz
section: 1-QB gates XY
group: Qubit #1

[DRAG scaling #1]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #1

[DRAG frequency detuning #1]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #1

[Copy #2]
datatype: BUTTON
label: Copy as template
section: 1-QB gates XY
group: Qubit #2

[Paste #2]
datatype: BUTTON
label: Use template
section: 1-QB gates XY
group: Qubit #2

[Amplitude #2]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude
state_value: False
section: 1-QB gates XY
group: Qubit #2

[Width #2]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #2

[Plateau #2]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #2

[Frequency #2]
datatype: DOUBLE
label: Frequency
unit: Hz
section: 1-QB gates XY
group: Qubit #2

[DRAG scaling #2]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #2

[DRAG frequency detuning #2]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #2

[Copy #3]
datatype: BUTTON
label: Copy as template
section: 1-QB gates XY
group: Qubit #3

[Paste #3]
datatype: BUTTON
label: Use template
section: 1-QB gates XY
group: Qubit #3

[Amplitude #3]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude
state_value: False
section: 1-QB gates XY
group: Qubit #3

[Width #3]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #3

[Plateau #3]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #3

[Frequency #3]
datatype: DOUBLE
label: Frequency
unit: Hz
section: 1-QB gates XY
group: Qubit #3

[DRAG scaling #3]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #3

[DRAG frequency detuning #3]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #3

[Copy #4]
datatype: BUTTON
label: Copy as template
section: 1-QB gates XY
group: Qubit #4

[Paste #4]
datatype: BUTTON
label: Use template
section: 1-QB gates XY
group: Qubit #4

[Amplitude #4]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude
state_value: False
section: 1-QB gates XY
group: Qubit #4

[Width #4]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #4

[Plateau #4]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #4

[Frequency #4]
datatype: DOUBLE
label: Frequency
unit: Hz
section: 1-QB gates XY
group: Qubit #4

[DRAG scaling #4]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #4

[DRAG frequency detuning #4]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #4

[Copy #5]
datatype: BUTTON
label: Copy as template
section: 1-QB gates XY
group: Qubit #5

[Paste #5]
datatype: BUTTON
label: Use template
section: 1-QB gates XY
group: Qubit #5

[Amplitude #5]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude
state_value: False
section: 1-QB gates XY
group: Qubit #5

[Width #5]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #5

[Plateau #5]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #5

[Frequency #5]
datatype: DOUBLE
label: Frequency
unit: Hz
section: 1-QB gates XY
group: Qubit #5

[DRAG scaling #5]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #5

[DRAG frequency detuning #5]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #5

[Copy #6]
datatype: BUTTON
label: Copy as template
section: 1-QB gates XY
group: Qubit #6

[Paste #6]
datatype: BUTTON
label: Use template
section: 1-QB gates XY
group: Qubit #6

[Amplitude #6]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude
state_value: False
section: 1-QB gates XY
group: Qubit #6

[Width #6]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #6

[Plateau #6]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #6

[Frequency #6]
datatype: DOUBLE
label: Frequency
unit: Hz
section: 1-QB gates XY
group: Qubit #6

[DRAG scaling #6]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #6

[DRAG frequency detuning #6]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #6

[Copy #7]
datatype: BUTTON
label: Copy as template
section: 1-QB gates XY
group: Qubit #7

[Paste #7]
datatype: BUTTON
label: Use template
section: 1-QB gates XY
group: Qubit #7

[Amplitude #7]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude
state_value: False
section: 1-QB gates XY
group: Qubit #7

[Width #7]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #7

[Plateau #7]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #7

[Frequency #7]
datatype: DOUBLE
label: Frequency
unit: Hz
section: 1-QB gates XY
group: Qubit #7

[DRAG scaling #7]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #7

[DRAG frequency detuning #7]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #7

[Copy #8]
datatype: BUTTON
label: Copy as template
section: 1-QB gates XY
group: Qubit #8

[Paste #8]
datatype: BUTTON
label: Use template
section: 1-QB gates XY
group: Qubit #8

[Amplitude #8]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude
state_value: False
section: 1-QB gates XY
group: Qubit #8

[Width #8]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #8

[Plateau #8]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #8

[Frequency #8]
datatype: DOUBLE
label: Frequency
unit: Hz
section: 1-QB gates XY
group: Qubit #8

[DRAG scaling #8]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #8

[DRAG frequency detuning #8]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #8

[Copy #9]
datatype: BUTTON
label: Copy as template
section: 1-QB gates XY
group: Qubit #9

[Paste #9]
datatype: BUTTON
label: Use template
section: 1-QB gates XY
group: Qubit #9

[Amplitude #9]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude
state_value: False
section: 1-QB gates XY
group: Qubit #9

[Width #9]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #9

[Plateau #9]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape
state_value: False
section: 1-QB gates XY
group: Qubit #9

[Frequency #9]
datatype: DOUBLE
label: Frequency
unit: Hz
section: 1-QB gates XY
group: Qubit #9

[DRAG scaling #9]
datatype: DOUBLE
label: DRAG scaling
unit: s
def_value: 2.5e-10
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #9

[DRAG frequency detuning #9]
datatype: DOUBLE
label: DRAG frequency detuning
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: True
section: 1-QB gates XY
group: Qubit #9

[Pulse type, Z]
datatype: COMBO
label: Pulse type
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
section: 1-QB gates Z
group: Pulse settings

[Truncation range, Z]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Pulse type, Z
state_value_1: Gaussian
section: 1-QB gates Z
group: Pulse settings

[Half cosine, Z]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Pulse type, Z
state_value_1: Cosine
section: 1-QB gates Z
group: Pulse settings

[Start at zero, Z]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Pulse type, Z
state_value_1: Gaussian
section: 1-QB gates Z
group: Pulse settings

[Net zero, Z]
datatype: BOOLEAN
label: Net zero
def_value: False
section: 1-QB gates Z
group: Pulse settings

[Net zero delay, Z]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Net zero, Z
state_value: True
section: 1-QB gates Z
group: Pulse settings

[Uniform amplitude, Z]
datatype: BOOLEAN
label: Uniform amplitude
def_value: False
section: 1-QB gates Z
group: Pulse settings

[Amplitude, Z]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude, Z
state_value: True
section: 1-QB gates Z
group: Pulse settings

[Uniform pulse shape, Z]
datatype: BOOLEAN
label: Uniform pulse shape
def_value: True
section: 1-QB gates Z
group: Pulse settings

[Width, Z]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
show_in_measurement_dlg: True
state_quant: Uniform pulse shape, Z
state_value: True
section: 1-QB gates Z
group: Pulse settings

[Plateau, Z]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
show_in_measurement_dlg: True
state_quant: Uniform pulse shape, Z
state_value: True
section: 1-QB gates Z
group: Pulse settings

[Amplitude #1, Z]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude, Z
state_value: False
section: 1-QB gates Z
group: Qubit #1

[Width #1, Z]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #1

[Plateau #1, Z]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #1

[Amplitude #2, Z]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude, Z
state_value: False
section: 1-QB gates Z
group: Qubit #2

[Width #2, Z]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #2

[Plateau #2, Z]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #2

[Amplitude #3, Z]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude, Z
state_value: False
section: 1-QB gates Z
group: Qubit #3

[Width #3, Z]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #3

[Plateau #3, Z]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #3

[Amplitude #4, Z]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude, Z
state_value: False
section: 1-QB gates Z
group: Qubit #4

[Width #4, Z]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #4

[Plateau #4, Z]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #4

[Amplitude #5, Z]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude, Z
state_value: False
section: 1-QB gates Z
group: Qubit #5

[Width #5, Z]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #5

[Plateau #5, Z]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #5

[Amplitude #6, Z]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude, Z
state_value: False
section: 1-QB gates Z
group: Qubit #6

[Width #6, Z]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #6

[Plateau #6, Z]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #6

[Amplitude #7, Z]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude, Z
state_value: False
section: 1-QB gates Z
group: Qubit #7

[Width #7, Z]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #7

[Plateau #7, Z]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #7

[Amplitude #8, Z]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude, Z
state_value: False
section: 1-QB gates Z
group: Qubit #8

[Width #8, Z]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #8

[Plateau #8, Z]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #8

[Amplitude #9, Z]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform amplitude, Z
state_value: False
section: 1-QB gates Z
group: Qubit #9

[Width #9, Z]
datatype: DOUBLE
label: Width
unit: s
def_value: 1e-08
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #9

[Plateau #9, Z]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform pulse shape, Z
state_value: False
section: 1-QB gates Z
group: Qubit #9

[Use readout Z shift]
datatype: BOOLEAN
label: Activate
def_value: False
section: Readout Z shift
group: Readout Z shift

[Time before readout, readout Z shift]
datatype: DOUBLE
label: Time before readout
unit: s
def_value: 1e-08
section: Readout Z shift
group: Readout Z shift

[Time after readout, readout Z shift]
datatype: DOUBLE
label: Time after readout
unit: s
def_value: 1e-08
section: Readout Z shift
group: Readout Z shift

[Ringup, readout Z shift]
datatype: DOUBLE
label: Ring-up time
unit: s
def_value: 0
section: Readout Z shift
group: Cosine pulse settings

[Amplitude #1, readout Z shift]
datatype: DOUBLE
label: Amplitude #1
unit: V
def_value: 0
section: Readout Z shift
group: readout Z shift amplitude

[Amplitude #2, readout Z shift]
datatype: DOUBLE
label: Amplitude #2
unit: V
def_value: 0
section: Readout Z shift
group: readout Z shift amplitude

[Amplitude #3, readout Z shift]
datatype: DOUBLE
label: Amplitude #3
unit: V
def_value: 0
section: Readout Z shift
group: readout Z shift amplitude

[Amplitude #4, readout Z shift]
datatype: DOUBLE
label: Amplitude #4
unit: V
def_value: 0
section: Readout Z shift
group: readout Z shift amplitude

[Amplitude #5, readout Z shift]
datatype: DOUBLE
label: Amplitude #5
unit: V
def_value: 0
section: Readout Z shift
group: readout Z shift amplitude

[Amplitude #6, readout Z shift]
datatype: DOUBLE
label: Amplitude #6
unit: V
def_value: 0
section: Readout Z shift
group: readout Z shift amplitude

[Amplitude #7, readout Z shift]
datatype: DOUBLE
label: Amplitude #7
unit: V
def_value: 0
section: Readout Z shift
group: readout Z shift amplitude

[Amplitude #8, readout Z shift]
datatype: DOUBLE
label: Amplitude #8
unit: V
def_value: 0
section: Readout Z shift
group: readout Z shift amplitude

[Amplitude #9, readout Z shift]
datatype: DOUBLE
label: Amplitude #9
unit: V
def_value: 0
section: Readout Z shift
group: readout Z shift amplitude

[Use global Z offset]
datatype: BOOLEAN
label: Activate
def_value: False
section: Global Z offset
group: Global Z offset

[Extend Z offset to readout]
datatype: BOOLEAN
label: Extend Z offset to readout
def_value: True
section: Global Z offset
group: Global Z offset

[Time after readout, Z global]
datatype: DOUBLE
label: Time after readout
unit: s
def_value: 1e-08
state_quant: Extend Z offset to readout
state_value: True
section: Global Z offset
group: Global Z offset

[Ringup, Z global]
datatype: DOUBLE
label: Ring-up time
unit: s
def_value: 2e-08
section: Global Z offset
group: Cosine pulse settings

[Amplitude #1, Z global]
datatype: DOUBLE
label: Amplitude #1
unit: V
def_value: 0
section: Global Z offset
group: Z offset amplitudes

[Amplitude #2, Z global]
datatype: DOUBLE
label: Amplitude #2
unit: V
def_value: 0
section: Global Z offset
group: Z offset amplitudes

[Amplitude #3, Z global]
datatype: DOUBLE
label: Amplitude #3
unit: V
def_value: 0
section: Global Z offset
group: Z offset amplitudes

[Amplitude #4, Z global]
datatype: DOUBLE
label: Amplitude #4
unit: V
def_value: 0
section: Global Z offset
group: Z offset amplitudes

[Amplitude #5, Z global]
datatype: DOUBLE
label: Amplitude #5
unit: V
def_value: 0
section: Global Z offset
group: Z offset amplitudes

[Amplitude #6, Z global]
datatype: DOUBLE
label: Amplitude #6
unit: V
def_value: 0
section: Global Z offset
group: Z offset amplitudes

[Amplitude #7, Z global]
datatype: DOUBLE
label: Amplitude #7
unit: V
def_value: 0
section: Global Z offset
group: Z offset amplitudes

[Amplitude #8, Z global]
datatype: DOUBLE
label: Amplitude #8
unit: V
def_value: 0
section: Global Z offset
group: Z offset amplitudes

[Amplitude #9, Z global]
datatype: DOUBLE
label: Amplitude #9
unit: V
def_value: 0
section: Global Z offset
group: Z offset amplitudes

[Ec #1]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200000000.0
section: QB spectra
group: Qubit #1

[f01 max #1]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5000000000.0
section: QB spectra
group: Qubit #1

[f01 min #1]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4000000000.0
section: QB spectra
group: Qubit #1

[Vperiod #1]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
section: QB spectra
group: Qubit #1

[Voffset #1]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
section: QB spectra
group: Qubit #1

[V0 #1]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
section: QB spectra
group: Qubit #1

[Ec #2]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200000000.0
section: QB spectra
group: Qubit #2

[f01 max #2]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5000000000.0
section: QB spectra
group: Qubit #2

[f01 min #2]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4000000000.0
section: QB spectra
group: Qubit #2

[Vperiod #2]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
section: QB spectra
group: Qubit #2

[Voffset #2]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
section: QB spectra
group: Qubit #2

[V0 #2]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
section: QB spectra
group: Qubit #2

[Ec #3]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200000000.0
section: QB spectra
group: Qubit #3

[f01 max #3]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5000000000.0
section: QB spectra
group: Qubit #3

[f01 min #3]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4000000000.0
section: QB spectra
group: Qubit #3

[Vperiod #3]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
section: QB spectra
group: Qubit #3

[Voffset #3]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
section: QB spectra
group: Qubit #3

[V0 #3]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
section: QB spectra
group: Qubit #3

[Ec #4]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200000000.0
section: QB spectra
group: Qubit #4

[f01 max #4]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5000000000.0
section: QB spectra
group: Qubit #4

[f01 min #4]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4000000000.0
section: QB spectra
group: Qubit #4

[Vperiod #4]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
section: QB spectra
group: Qubit #4

[Voffset #4]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
section: QB spectra
group: Qubit #4

[V0 #4]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
section: QB spectra
group: Qubit #4

[Ec #5]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200000000.0
section: QB spectra
group: Qubit #5

[f01 max #5]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5000000000.0
section: QB spectra
group: Qubit #5

[f01 min #5]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4000000000.0
section: QB spectra
group: Qubit #5

[Vperiod #5]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
section: QB spectra
group: Qubit #5

[Voffset #5]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
section: QB spectra
group: Qubit #5

[V0 #5]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
section: QB spectra
group: Qubit #5

[Ec #6]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200000000.0
section: QB spectra
group: Qubit #6

[f01 max #6]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5000000000.0
section: QB spectra
group: Qubit #6

[f01 min #6]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4000000000.0
section: QB spectra
group: Qubit #6

[Vperiod #6]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
section: QB spectra
group: Qubit #6

[Voffset #6]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
section: QB spectra
group: Qubit #6

[V0 #6]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
section: QB spectra
group: Qubit #6

[Ec #7]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200000000.0
section: QB spectra
group: Qubit #7

[f01 max #7]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5000000000.0
section: QB spectra
group: Qubit #7

[f01 min #7]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4000000000.0
section: QB spectra
group: Qubit #7

[Vperiod #7]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
section: QB spectra
group: Qubit #7

[Voffset #7]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
section: QB spectra
group: Qubit #7

[V0 #7]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
section: QB spectra
group: Qubit #7

[Ec #8]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200000000.0
section: QB spectra
group: Qubit #8

[f01 max #8]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5000000000.0
section: QB spectra
group: Qubit #8

[f01 min #8]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4000000000.0
section: QB spectra
group: Qubit #8

[Vperiod #8]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
section: QB spectra
group: Qubit #8

[Voffset #8]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
section: QB spectra
group: Qubit #8

[V0 #8]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
section: QB spectra
group: Qubit #8

[Ec #9]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200000000.0
section: QB spectra
group: Qubit #9

[f01 max #9]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5000000000.0
section: QB spectra
group: Qubit #9

[f01 min #9]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4000000000.0
section: QB spectra
group: Qubit #9

[Vperiod #9]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
section: QB spectra
group: Qubit #9

[Voffset #9]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
section: QB spectra
group: Qubit #9

[V0 #9]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
section: QB spectra
group: Qubit #9

[Pulse type, 2QB]
datatype: COMBO
label: Pulse type
def_value: Slepian
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
combo_def_5: Slepian
section: 2-QB gates
group: 2-QB pulses

[Truncation range, 2QB]
datatype: DOUBLE
label: Truncation range
def_value: 3
tooltip: Truncate at ? σ
state_quant: Pulse type, 2QB
state_value_1: Gaussian
section: 2-QB gates
group: 2-QB pulses

[Half cosine, 2QB]
datatype: BOOLEAN
label: Half cosine
def_value: False
state_quant: Pulse type, 2QB
state_value_1: Cosine
section: 2-QB gates
group: 2-QB pulses

[Start at zero, 2QB]
datatype: BOOLEAN
label: Start at zero
def_value: False
state_quant: Pulse type, 2QB
state_value_1: Gaussian
section: 2-QB gates
group: 2-QB pulses

[Net zero, 2QB]
datatype: BOOLEAN
label: Net zero
def_value: False
section: 2-QB gates
group: 2-QB pulses

[Net zero delay, 2QB]
datatype: DOUBLE
label: Net zero delay
unit: s
def_value: 0
low_lim: 0
state_quant: Net zero, 2QB
state_value: True
section: 2-QB gates
group: 2-QB pulses

[Uniform 2QB pulses]
datatype: BOOLEAN
def_value: True
section: 2-QB gates
group: 2-QB pulses

[Width, 2QB]
datatype: DOUBLE
label: Width
unit: s
def_value: 5e-08
low_lim: 0
show_in_measurement_dlg: True
state_quant: Uniform 2QB pulses
state_value: True
section: 2-QB gates
group: 2-QB pulses

[Plateau, 2QB]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
show_in_measurement_dlg: True
state_quant: Uniform 2QB pulses
state_value: True
section: 2-QB gates
group: 2-QB pulses

[Fourier terms, 2QB]
datatype: COMBO
label: Fourier Terms
def_value: 1
tooltip: Number of fourier terms used to define the pulseshape of the C-phase gate
state_quant: Pulse type, 2QB
state_value_1: Slepian
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
section: 2-QB gates
group: 2-QB pulses

[On qubit, 2QB #12]
datatype: COMBO
label: On qubit
combo_def_1: First
combo_def_2: Second
section: 2-QB gates
group: Qubit #1-#2

[Amplitude, 2QB #12]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
section: 2-QB gates
group: Qubit #1-#2

[Width, 2QB #12]
datatype: DOUBLE
label: Width
unit: s
def_value: 5e-08
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #1-#2

[Plateau, 2QB #12]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #1-#2

[Assume linear dependence #12]
datatype: BOOLEAN
label: Assume linear dependence
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #1-#2

[df/dV, 2QB #12]
datatype: DOUBLE
label: df/dV
unit: Hz/V
def_value: 500000000.0
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #1-#2

[f11-f20 initial, 2QB #12]
datatype: DOUBLE
label: f11-f20 initial
unit: Hz
def_value: 300000000.0
tooltip: Initial frequency splitting between the |11> state and the |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #1-#2

[f11-f20 final, 2QB #12]
datatype: DOUBLE
label: f11-f20 final
unit: Hz
def_value: 50000000.0
tooltip: Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #1-#2

[Coupling, 2QB #12]
datatype: DOUBLE
label: Coupling
unit: Hz
def_value: 25000000.0
tooltip: Coupling strength between |11> state and |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #1-#2

[L1, 2QB #12]
datatype: DOUBLE
label: L1
def_value: 1
tooltip: First fourier coefficient used to define the pulse shape of the C-phase gate.
state_quant: Fourier terms, 2QB
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
section: 2-QB gates
group: Qubit #1-#2

[L2, 2QB #12]
datatype: DOUBLE
label: L2
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 2
state_value_2: 3
state_value_3: 4
section: 2-QB gates
group: Qubit #1-#2

[L3, 2QB #12]
datatype: DOUBLE
label: L3
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 3
state_value_2: 4
section: 2-QB gates
group: Qubit #1-#2

[L4, 2QB #12]
datatype: DOUBLE
label: L4
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 4
section: 2-QB gates
group: Qubit #1-#2

[QB1 Phi 2QB #12]
datatype: DOUBLE
label: QB1 Phase shift
def_value: 0
section: 2-QB gates
group: Qubit #1-#2

[QB2 Phi 2QB #12]
datatype: DOUBLE
label: QB2 Phase shift
def_value: 0
section: 2-QB gates
group: Qubit #1-#2

[Negative amplitude #12]
datatype: BOOLEAN
label: Negative amplitude
def_value: False
tooltip: Flip the sign of the amplitude of the CZ pulse
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #1-#2

[On qubit, 2QB #23]
datatype: COMBO
label: On qubit
combo_def_1: First
combo_def_2: Second
section: 2-QB gates
group: Qubit #2-#3

[Amplitude, 2QB #23]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
section: 2-QB gates
group: Qubit #2-#3

[Width, 2QB #23]
datatype: DOUBLE
label: Width
unit: s
def_value: 5e-08
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #2-#3

[Plateau, 2QB #23]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #2-#3

[Assume linear dependence #23]
datatype: BOOLEAN
label: Assume linear dependence
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #2-#3

[df/dV, 2QB #23]
datatype: DOUBLE
label: df/dV
unit: Hz/V
def_value: 500000000.0
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #2-#3

[f11-f20 initial, 2QB #23]
datatype: DOUBLE
label: f11-f20 initial
unit: Hz
def_value: 300000000.0
tooltip: Initial frequency splitting between the |11> state and the |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #2-#3

[f11-f20 final, 2QB #23]
datatype: DOUBLE
label: f11-f20 final
unit: Hz
def_value: 50000000.0
tooltip: Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #2-#3

[Coupling, 2QB #23]
datatype: DOUBLE
label: Coupling
unit: Hz
def_value: 25000000.0
tooltip: Coupling strength between |11> state and |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #2-#3

[L1, 2QB #23]
datatype: DOUBLE
label: L1
def_value: 1
tooltip: First fourier coefficient used to define the pulse shape of the C-phase gate.
state_quant: Fourier terms, 2QB
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
section: 2-QB gates
group: Qubit #2-#3

[L2, 2QB #23]
datatype: DOUBLE
label: L2
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 2
state_value_2: 3
state_value_3: 4
section: 2-QB gates
group: Qubit #2-#3

[L3, 2QB #23]
datatype: DOUBLE
label: L3
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 3
state_value_2: 4
section: 2-QB gates
group: Qubit #2-#3

[L4, 2QB #23]
datatype: DOUBLE
label: L4
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 4
section: 2-QB gates
group: Qubit #2-#3

[Negative amplitude #23]
datatype: BOOLEAN
label: Negative amplitude
def_value: False
tooltip: Flip the sign of the amplitude of the CZ pulse
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #2-#3

[On qubit, 2QB #34]
datatype: COMBO
label: On qubit
combo_def_1: First
combo_def_2: Second
section: 2-QB gates
group: Qubit #3-#4

[Amplitude, 2QB #34]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
section: 2-QB gates
group: Qubit #3-#4

[Width, 2QB #34]
datatype: DOUBLE
label: Width
unit: s
def_value: 5e-08
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #3-#4

[Plateau, 2QB #34]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #3-#4

[Assume linear dependence #34]
datatype: BOOLEAN
label: Assume linear dependence
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #3-#4

[df/dV, 2QB #34]
datatype: DOUBLE
label: df/dV
unit: Hz/V
def_value: 500000000.0
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #3-#4

[f11-f20 initial, 2QB #34]
datatype: DOUBLE
label: f11-f20 initial
unit: Hz
def_value: 300000000.0
tooltip: Initial frequency splitting between the |11> state and the |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #3-#4

[f11-f20 final, 2QB #34]
datatype: DOUBLE
label: f11-f20 final
unit: Hz
def_value: 50000000.0
tooltip: Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #3-#4

[Coupling, 2QB #34]
datatype: DOUBLE
label: Coupling
unit: Hz
def_value: 25000000.0
tooltip: Coupling strength between |11> state and |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #3-#4

[L1, 2QB #34]
datatype: DOUBLE
label: L1
def_value: 1
tooltip: First fourier coefficient used to define the pulse shape of the C-phase gate.
state_quant: Fourier terms, 2QB
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
section: 2-QB gates
group: Qubit #3-#4

[L2, 2QB #34]
datatype: DOUBLE
label: L2
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 2
state_value_2: 3
state_value_3: 4
section: 2-QB gates
group: Qubit #3-#4

[L3, 2QB #34]
datatype: DOUBLE
label: L3
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 3
state_value_2: 4
section: 2-QB gates
group: Qubit #3-#4

[L4, 2QB #34]
datatype: DOUBLE
label: L4
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 4
section: 2-QB gates
group: Qubit #3-#4

[Negative amplitude #34]
datatype: BOOLEAN
label: Negative amplitude
def_value: False
tooltip: Flip the sign of the amplitude of the CZ pulse
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #3-#4

[On qubit, 2QB #45]
datatype: COMBO
label: On qubit
combo_def_1: First
combo_def_2: Second
section: 2-QB gates
group: Qubit #4-#5

[Amplitude, 2QB #45]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
section: 2-QB gates
group: Qubit #4-#5

[Width, 2QB #45]
datatype: DOUBLE
label: Width
unit: s
def_value: 5e-08
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #4-#5

[Plateau, 2QB #45]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #4-#5

[Assume linear dependence #45]
datatype: BOOLEAN
label: Assume linear dependence
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #4-#5

[df/dV, 2QB #45]
datatype: DOUBLE
label: df/dV
unit: Hz/V
def_value: 500000000.0
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #4-#5

[f11-f20 initial, 2QB #45]
datatype: DOUBLE
label: f11-f20 initial
unit: Hz
def_value: 300000000.0
tooltip: Initial frequency splitting between the |11> state and the |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #4-#5

[f11-f20 final, 2QB #45]
datatype: DOUBLE
label: f11-f20 final
unit: Hz
def_value: 50000000.0
tooltip: Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #4-#5

[Coupling, 2QB #45]
datatype: DOUBLE
label: Coupling
unit: Hz
def_value: 25000000.0
tooltip: Coupling strength between |11> state and |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #4-#5

[L1, 2QB #45]
datatype: DOUBLE
label: L1
def_value: 1
tooltip: First fourier coefficient used to define the pulse shape of the C-phase gate.
state_quant: Fourier terms, 2QB
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
section: 2-QB gates
group: Qubit #4-#5

[L2, 2QB #45]
datatype: DOUBLE
label: L2
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 2
state_value_2: 3
state_value_3: 4
section: 2-QB gates
group: Qubit #4-#5

[L3, 2QB #45]
datatype: DOUBLE
label: L3
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 3
state_value_2: 4
section: 2-QB gates
group: Qubit #4-#5

[L4, 2QB #45]
datatype: DOUBLE
label: L4
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 4
section: 2-QB gates
group: Qubit #4-#5

[Negative amplitude #45]
datatype: BOOLEAN
label: Negative amplitude
def_value: False
tooltip: Flip the sign of the amplitude of the CZ pulse
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #4-#5

[On qubit, 2QB #56]
datatype: COMBO
label: On qubit
combo_def_1: First
combo_def_2: Second
section: 2-QB gates
group: Qubit #5-#6

[Amplitude, 2QB #56]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
section: 2-QB gates
group: Qubit #5-#6

[Width, 2QB #56]
datatype: DOUBLE
label: Width
unit: s
def_value: 5e-08
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #5-#6

[Plateau, 2QB #56]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #5-#6

[Assume linear dependence #56]
datatype: BOOLEAN
label: Assume linear dependence
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #5-#6

[df/dV, 2QB #56]
datatype: DOUBLE
label: df/dV
unit: Hz/V
def_value: 500000000.0
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #5-#6

[f11-f20 initial, 2QB #56]
datatype: DOUBLE
label: f11-f20 initial
unit: Hz
def_value: 300000000.0
tooltip: Initial frequency splitting between the |11> state and the |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #5-#6

[f11-f20 final, 2QB #56]
datatype: DOUBLE
label: f11-f20 final
unit: Hz
def_value: 50000000.0
tooltip: Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #5-#6

[Coupling, 2QB #56]
datatype: DOUBLE
label: Coupling
unit: Hz
def_value: 25000000.0
tooltip: Coupling strength between |11> state and |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #5-#6

[L1, 2QB #56]
datatype: DOUBLE
label: L1
def_value: 1
tooltip: First fourier coefficient used to define the pulse shape of the C-phase gate.
state_quant: Fourier terms, 2QB
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
section: 2-QB gates
group: Qubit #5-#6

[L2, 2QB #56]
datatype: DOUBLE
label: L2
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 2
state_value_2: 3
state_value_3: 4
section: 2-QB gates
group: Qubit #5-#6

[L3, 2QB #56]
datatype: DOUBLE
label: L3
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 3
state_value_2: 4
section: 2-QB gates
group: Qubit #5-#6

[L4, 2QB #56]
datatype: DOUBLE
label: L4
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 4
section: 2-QB gates
group: Qubit #5-#6

[Negative amplitude #56]
datatype: BOOLEAN
label: Negative amplitude
def_value: False
tooltip: Flip the sign of the amplitude of the CZ pulse
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #5-#6

[On qubit, 2QB #67]
datatype: COMBO
label: On qubit
combo_def_1: First
combo_def_2: Second
section: 2-QB gates
group: Qubit #6-#7

[Amplitude, 2QB #67]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
section: 2-QB gates
group: Qubit #6-#7

[Width, 2QB #67]
datatype: DOUBLE
label: Width
unit: s
def_value: 5e-08
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #6-#7

[Plateau, 2QB #67]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #6-#7

[Assume linear dependence #67]
datatype: BOOLEAN
label: Assume linear dependence
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #6-#7

[df/dV, 2QB #67]
datatype: DOUBLE
label: df/dV
unit: Hz/V
def_value: 500000000.0
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #6-#7

[f11-f20 initial, 2QB #67]
datatype: DOUBLE
label: f11-f20 initial
unit: Hz
def_value: 300000000.0
tooltip: Initial frequency splitting between the |11> state and the |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #6-#7

[f11-f20 final, 2QB #67]
datatype: DOUBLE
label: f11-f20 final
unit: Hz
def_value: 50000000.0
tooltip: Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #6-#7

[Coupling, 2QB #67]
datatype: DOUBLE
label: Coupling
unit: Hz
def_value: 25000000.0
tooltip: Coupling strength between |11> state and |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #6-#7

[L1, 2QB #67]
datatype: DOUBLE
label: L1
def_value: 1
tooltip: First fourier coefficient used to define the pulse shape of the C-phase gate.
state_quant: Fourier terms, 2QB
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
section: 2-QB gates
group: Qubit #6-#7

[L2, 2QB #67]
datatype: DOUBLE
label: L2
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 2
state_value_2: 3
state_value_3: 4
section: 2-QB gates
group: Qubit #6-#7

[L3, 2QB #67]
datatype: DOUBLE
label: L3
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 3
state_value_2: 4
section: 2-QB gates
group: Qubit #6-#7

[L4, 2QB #67]
datatype: DOUBLE
label: L4
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 4
section: 2-QB gates
group: Qubit #6-#7

[Negative amplitude #67]
datatype: BOOLEAN
label: Negative amplitude
def_value: False
tooltip: Flip the sign of the amplitude of the CZ pulse
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #6-#7

[On qubit, 2QB #78]
datatype: COMBO
label: On qubit
combo_def_1: First
combo_def_2: Second
section: 2-QB gates
group: Qubit #7-#8

[Amplitude, 2QB #78]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
section: 2-QB gates
group: Qubit #7-#8

[Width, 2QB #78]
datatype: DOUBLE
label: Width
unit: s
def_value: 5e-08
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #7-#8

[Plateau, 2QB #78]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #7-#8

[Assume linear dependence #78]
datatype: BOOLEAN
label: Assume linear dependence
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #7-#8

[df/dV, 2QB #78]
datatype: DOUBLE
label: df/dV
unit: Hz/V
def_value: 500000000.0
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #7-#8

[f11-f20 initial, 2QB #78]
datatype: DOUBLE
label: f11-f20 initial
unit: Hz
def_value: 300000000.0
tooltip: Initial frequency splitting between the |11> state and the |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #7-#8

[f11-f20 final, 2QB #78]
datatype: DOUBLE
label: f11-f20 final
unit: Hz
def_value: 50000000.0
tooltip: Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #7-#8

[Coupling, 2QB #78]
datatype: DOUBLE
label: Coupling
unit: Hz
def_value: 25000000.0
tooltip: Coupling strength between |11> state and |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #7-#8

[L1, 2QB #78]
datatype: DOUBLE
label: L1
def_value: 1
tooltip: First fourier coefficient used to define the pulse shape of the C-phase gate.
state_quant: Fourier terms, 2QB
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
section: 2-QB gates
group: Qubit #7-#8

[L2, 2QB #78]
datatype: DOUBLE
label: L2
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 2
state_value_2: 3
state_value_3: 4
section: 2-QB gates
group: Qubit #7-#8

[L3, 2QB #78]
datatype: DOUBLE
label: L3
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 3
state_value_2: 4
section: 2-QB gates
group: Qubit #7-#8

[L4, 2QB #78]
datatype: DOUBLE
label: L4
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 4
section: 2-QB gates
group: Qubit #7-#8

[Negative amplitude #78]
datatype: BOOLEAN
label: Negative amplitude
def_value: False
tooltip: Flip the sign of the amplitude of the CZ pulse
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #7-#8

[On qubit, 2QB #89]
datatype: COMBO
label: On qubit
combo_def_1: First
combo_def_2: Second
section: 2-QB gates
group: Qubit #8-#9

[Amplitude, 2QB #89]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 1
show_in_measurement_dlg: True
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
section: 2-QB gates
group: Qubit #8-#9

[Width, 2QB #89]
datatype: DOUBLE
label: Width
unit: s
def_value: 5e-08
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #8-#9

[Plateau, 2QB #89]
datatype: DOUBLE
label: Plateau
unit: s
def_value: 0
low_lim: 0
state_quant: Uniform 2QB pulses
state_value: False
section: 2-QB gates
group: Qubit #8-#9

[Assume linear dependence #89]
datatype: BOOLEAN
label: Assume linear dependence
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #8-#9

[df/dV, 2QB #89]
datatype: DOUBLE
label: df/dV
unit: Hz/V
def_value: 500000000.0
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #8-#9

[f11-f20 initial, 2QB #89]
datatype: DOUBLE
label: f11-f20 initial
unit: Hz
def_value: 300000000.0
tooltip: Initial frequency splitting between the |11> state and the |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #8-#9

[f11-f20 final, 2QB #89]
datatype: DOUBLE
label: f11-f20 final
unit: Hz
def_value: 50000000.0
tooltip: Smallest frequency splitting between the |11> state and the |02> state during the C-phase gate
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #8-#9

[Coupling, 2QB #89]
datatype: DOUBLE
label: Coupling
unit: Hz
def_value: 25000000.0
tooltip: Coupling strength between |11> state and |02> state
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #8-#9

[L1, 2QB #89]
datatype: DOUBLE
label: L1
def_value: 1
tooltip: First fourier coefficient used to define the pulse shape of the C-phase gate.
state_quant: Fourier terms, 2QB
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
section: 2-QB gates
group: Qubit #8-#9

[L2, 2QB #89]
datatype: DOUBLE
label: L2
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 2
state_value_2: 3
state_value_3: 4
section: 2-QB gates
group: Qubit #8-#9

[L3, 2QB #89]
datatype: DOUBLE
label: L3
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 3
state_value_2: 4
section: 2-QB gates
group: Qubit #8-#9

[L4, 2QB #89]
datatype: DOUBLE
label: L4
def_value: 0
state_quant: Fourier terms, 2QB
state_value_1: 4
section: 2-QB gates
group: Qubit #8-#9

[Negative amplitude #89]
datatype: BOOLEAN
label: Negative amplitude
def_value: False
tooltip: Flip the sign of the amplitude of the CZ pulse
state_quant: Pulse type, 2QB
state_value_1: Slepian
section: 2-QB gates
group: Qubit #8-#9

[Generate process tomography prepulse]
datatype: BOOLEAN
def_value: False
section: Tomography
group: Tomography

[Generate state tomography postpulse]
datatype: BOOLEAN
def_value: False
section: Tomography
group: Tomography

[Tomography scheme]
datatype: COMBO
def_value: Single qubit
combo_def_1: Single qubit
combo_def_2: Two qubit (9 pulse set)
combo_def_3: Two qubit (30 pulse set)
combo_def_4: Two qubit (36 pulse set)
section: Tomography
group: State tomography setup

[Process tomography prepulse index 1-QB]
datatype: COMBO
label: Prepulse index 1-QB
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value_1: Single qubit
combo_def_1: 0: I
combo_def_2: 1: Xp
combo_def_3: X: Y2p
combo_def_4: Y: X2m
section: Tomography
group: State tomography setup

[Process tomography prepulse index 2-QB]
datatype: COMBO
label: Prepulse index 2-QB
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value_1: Two qubit (9 pulse set)
state_value_2: Two qubit (30 pulse set)
state_value_3: Two qubit (36 pulse set)
combo_def_1: 00: I-I
combo_def_2: 01: I-Xp
combo_def_3: 0X: I-Y2p
combo_def_4: 0Y: I-X2m
combo_def_5: 10: Xp-I
combo_def_6: 11: Xp-Xp
combo_def_7: 1X: Xp-Y2p
combo_def_8: 1Y: Xp-X2m
combo_def_9: X0: Y2p-I
combo_def_10: X1: Y2p-Xp
combo_def_11: XX: Y2p-Y2p
combo_def_12: XY: Y2p-X2m
combo_def_13: Y0: X2m-I
combo_def_14: Y1: X2m-Xp
combo_def_15: YX: X2m-Y2p
combo_def_16: YY: X2m-X2m
section: Tomography
group: State tomography setup

[Tomography pulse index 1-QB]
datatype: COMBO
label: Postpulse index 1-QB
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value_1: Single qubit
combo_def_1: Z: I
combo_def_2: Y: X2p
combo_def_3: X: Y2m
section: Tomography
group: State tomography setup

[Tomography pulse index 2-QB (9 pulse set)]
datatype: COMBO
label: Postpulse index 2-QB
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value_1: Two qubit (9 pulse set)
combo_def_1: ZZ: I-I
combo_def_2: ZY: I-X2p
combo_def_3: ZX: I-Y2m
combo_def_4: YZ: X2p-I
combo_def_5: YY: X2p-X2p
combo_def_6: YX: X2p-Y2m
combo_def_7: XZ: Y2m-I
combo_def_8: XY: Y2m-X2p
combo_def_9: XX: Y2m-Y2m
section: Tomography
group: State tomography setup

[Tomography pulse index 2-QB (30 pulse set)]
datatype: COMBO
label: Postpulse index 2-QB
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value_1: Two qubit (30 pulse set)
combo_def_1: I-I
combo_def_2: I-X2p
combo_def_3: I-Y2p
combo_def_4: I-Xp
combo_def_5: X2p-I
combo_def_6: X2p-X2p
combo_def_7: X2p-Y2p
combo_def_8: X2p-Xp
combo_def_9: Y2p-I
combo_def_10: Y2p-X2p
combo_def_11: Y2p-Y2p
combo_def_12: Y2p-Xp
combo_def_13: Xp-I
combo_def_14: Xp-X2p
combo_def_15: Xp-Y2p
combo_def_16: I-X2m
combo_def_17: I-Y2m
combo_def_18: I-Xm
combo_def_19: X2m-I
combo_def_20: X2m-X2m
combo_def_21: X2m-Y2m
combo_def_22: X2m-Xm
combo_def_23: Y2m-I
combo_def_24: Y2m-X2m
combo_def_25: Y2m-Y2m
combo_def_26: Y2m-Xm
combo_def_27: Xm-I
combo_def_28: Xm-X2m
combo_def_29: Xm-Y2m
section: Tomography
group: State tomography setup

[Tomography pulse index 2-QB (36 pulse set)]
datatype: COMBO
label: Postpulse index 2-QB
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value_1: Two qubit (36 pulse set)
combo_def_1: I-I
combo_def_2: I-Xp
combo_def_3: I-X2p
combo_def_4: I-X2m
combo_def_5: I-Y2p
combo_def_6: I-Y2m
combo_def_7: Xp-I
combo_def_8: Xp-Xp
combo_def_9: Xp-X2p
combo_def_10: Xp-X2m
combo_def_11: Xp-Y2p
combo_def_12: Xp-Y2m
combo_def_13: X2p-I
combo_def_14: X2p-Xp
combo_def_15: X2p-X2p
combo_def_16: X2p-X2m
combo_def_17: X2p-Y2p
combo_def_18: X2p-Y2m
combo_def_19: X2m-I
combo_def_20: X2m-Xp
combo_def_21: X2m-X2p
combo_def_22: X2m-X2m
combo_def_23: X2m-Y2p
combo_def_24: X2m-Y2m
combo_def_25: Y2p-I
combo_def_26: Y2p-Xp
combo_def_27: Y2p-X2p
combo_def_28: Y2p-X2m
combo_def_29: Y2p-Y2p
combo_def_30: Y2p-Y2m
combo_def_31: Y2m-I
combo_def_32: Y2m-Xp
combo_def_33: Y2m-X2p
combo_def_34: Y2m-X2m
combo_def_35: Y2m-Y2p
combo_def_36: Y2m-Y2m
section: Tomography
group: State tomography setup

[Qubit for tomography]
datatype: COMBO
label: Qubit #
state_quant: Tomography scheme
state_value_1: Single qubit
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Tomography
group: Qubits for tomography

[Qubit 1 # tomography]
datatype: COMBO
label: Qubit 1 #
def_value: 1
state_quant: Tomography scheme
state_value_1: Two qubit (9 pulse set)
state_value_2: Two qubit (30 pulse set)
state_value_3: Two qubit (36 pulse set)
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Tomography
group: Qubits for tomography

[Qubit 2 # tomography]
datatype: COMBO
label: Qubit 2 #
def_value: 2
state_quant: Tomography scheme
state_value_1: Two qubit (9 pulse set)
state_value_2: Two qubit (30 pulse set)
state_value_3: Two qubit (36 pulse set)
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
section: Tomography
group: Qubits for tomography

[Predistort waveforms]
datatype: BOOLEAN
def_value: False
section: Predistortion
group: XY Predistortion

[Transfer function #1]
datatype: PATH
section: Predistortion
group: XY Predistortion

[Transfer function #2]
datatype: PATH
section: Predistortion
group: XY Predistortion

[Transfer function #3]
datatype: PATH
section: Predistortion
group: XY Predistortion

[Transfer function #4]
datatype: PATH
section: Predistortion
group: XY Predistortion

[Transfer function #5]
datatype: PATH
section: Predistortion
group: XY Predistortion

[Transfer function #6]
datatype: PATH
section: Predistortion
group: XY Predistortion

[Transfer function #7]
datatype: PATH
section: Predistortion
group: XY Predistortion

[Transfer function #8]
datatype: PATH
section: Predistortion
group: XY Predistortion

[Transfer function #9]
datatype: PATH
section: Predistortion
group: XY Predistortion

[Predistort Z]
datatype: BOOLEAN
def_value: False
section: Predistortion
group: Z Predistorion

[Uniform predistort Z]
datatype: BOOLEAN
def_value: False
section: Predistortion
group: Z Predistorion

[Predistort Z - from string]
datatype: BOOLEAN
label: From representation string
def_value: False
section: Predistortion
group: Uniform predistort Z

[Predistort Z - A1]
datatype: DOUBLE
label: A1
tooltip: Amplitude of second-order IIR filter
section: Predistortion
group: Uniform predistort Z

[Predistort Z - tauA1]
datatype: DOUBLE
label: tau A1
unit: s
tooltip: Decay time of second-order IIR filter
low_lim: 0
section: Predistortion
group: Uniform predistort Z

[Predistort Z - TA1]
datatype: DOUBLE
label: T A1
unit: s
tooltip: Oscillation period of second-order IIR filter
low_lim: 0
section: Predistortion
group: Uniform predistort Z

[Predistort Z - phiA1]
datatype: DOUBLE
label: phi A1
unit: deg
tooltip: Initial phase of second-order IIR filter
section: Predistortion
group: Uniform predistort Z

[Predistort Z - B1]
datatype: DOUBLE
label: B1
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Uniform predistort Z

[Predistort Z - tauB1]
datatype: DOUBLE
label: tau B1
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Uniform predistort Z

[Predistort Z - B2]
datatype: DOUBLE
label: B2
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Uniform predistort Z

[Predistort Z - tauB2]
datatype: DOUBLE
label: tau B2
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Uniform predistort Z

[Predistort Z - B3]
datatype: DOUBLE
label: B3
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Uniform predistort Z

[Predistort Z - tauB3]
datatype: DOUBLE
label: tau B3
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Uniform predistort Z

[Predistort Z - B4]
datatype: DOUBLE
label: B4
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Uniform predistort Z

[Predistort Z - tauB4]
datatype: DOUBLE
label: tau B4
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Uniform predistort Z

[Predistort Z - tauC]
datatype: DOUBLE
label: tau C
unit: s
tooltip: Time constant for capacitor.
low_lim: 0
section: Predistortion
group: Uniform predistort Z

[Predistort Z - leakC]
datatype: DOUBLE
label: leak C
def_value: 0
tooltip: leak voltage of capacitor.
low_lim: 0
high_lim: 1
section: Predistortion
group: Uniform predistort Z

[Predistort Z - string]
datatype: STRING
label: Representation string
tooltip: String representation for `Filter`
section: Predistortion
group: Uniform predistort Z

[Predistort Z1 - from string]
datatype: BOOLEAN
label: From representation string
def_value: False
section: Predistortion
group: Qubit #1

[Predistort Z1 - A1]
datatype: DOUBLE
label: A1
tooltip: Amplitude of second-order IIR filter
section: Predistortion
group: Qubit #1

[Predistort Z1 - tauA1]
datatype: DOUBLE
label: tau A1
unit: s
tooltip: Decay time of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #1

[Predistort Z1 - TA1]
datatype: DOUBLE
label: T A1
unit: s
tooltip: Oscillation period of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #1

[Predistort Z1 - phiA1]
datatype: DOUBLE
label: phi A1
unit: deg
tooltip: Initial phase of second-order IIR filter
section: Predistortion
group: Qubit #1

[Predistort Z1 - B1]
datatype: DOUBLE
label: B1
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #1

[Predistort Z1 - tauB1]
datatype: DOUBLE
label: tau B1
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #1

[Predistort Z1 - B2]
datatype: DOUBLE
label: B2
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #1

[Predistort Z1 - tauB2]
datatype: DOUBLE
label: tau B2
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #1

[Predistort Z1 - B3]
datatype: DOUBLE
label: B3
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #1

[Predistort Z1 - tauB3]
datatype: DOUBLE
label: tau B3
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #1

[Predistort Z1 - B4]
datatype: DOUBLE
label: B4
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #1

[Predistort Z1 - tauB4]
datatype: DOUBLE
label: tau B4
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #1

[Predistort Z1 - tauC]
datatype: DOUBLE
label: tau C
unit: s
tooltip: Time constant for capacitor.
low_lim: 0
section: Predistortion
group: Qubit #1

[Predistort Z1 - leakC]
datatype: DOUBLE
label: leak C
def_value: 0
tooltip: leak voltage of capacitor.
low_lim: 0
high_lim: 1
section: Predistortion
group: Qubit #1

[Predistort Z1 - string]
datatype: STRING
label: Representation string
tooltip: String representation for `Filter`
section: Predistortion
group: Qubit #1

[Predistort Z2 - from string]
datatype: BOOLEAN
label: From representation string
def_value: False
section: Predistortion
group: Qubit #2

[Predistort Z2 - A1]
datatype: DOUBLE
label: A1
tooltip: Amplitude of second-order IIR filter
section: Predistortion
group: Qubit #2

[Predistort Z2 - tauA1]
datatype: DOUBLE
label: tau A1
unit: s
tooltip: Decay time of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #2

[Predistort Z2 - TA1]
datatype: DOUBLE
label: T A1
unit: s
tooltip: Oscillation period of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #2

[Predistort Z2 - phiA1]
datatype: DOUBLE
label: phi A1
unit: deg
tooltip: Initial phase of second-order IIR filter
section: Predistortion
group: Qubit #2

[Predistort Z2 - B1]
datatype: DOUBLE
label: B1
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #2

[Predistort Z2 - tauB1]
datatype: DOUBLE
label: tau B1
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #2

[Predistort Z2 - B2]
datatype: DOUBLE
label: B2
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #2

[Predistort Z2 - tauB2]
datatype: DOUBLE
label: tau B2
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #2

[Predistort Z2 - B3]
datatype: DOUBLE
label: B3
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #2

[Predistort Z2 - tauB3]
datatype: DOUBLE
label: tau B3
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #2

[Predistort Z2 - B4]
datatype: DOUBLE
label: B4
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #2

[Predistort Z2 - tauB4]
datatype: DOUBLE
label: tau B4
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #2

[Predistort Z2 - tauC]
datatype: DOUBLE
label: tau C
unit: s
tooltip: Time constant for capacitor.
low_lim: 0
section: Predistortion
group: Qubit #2

[Predistort Z2 - leakC]
datatype: DOUBLE
label: leak C
def_value: 0
tooltip: leak voltage of capacitor.
low_lim: 0
high_lim: 1
section: Predistortion
group: Qubit #2

[Predistort Z2 - string]
datatype: STRING
label: Representation string
tooltip: String representation for `Filter`
section: Predistortion
group: Qubit #2

[Predistort Z3 - from string]
datatype: BOOLEAN
label: From representation string
def_value: False
section: Predistortion
group: Qubit #3

[Predistort Z3 - A1]
datatype: DOUBLE
label: A1
tooltip: Amplitude of second-order IIR filter
section: Predistortion
group: Qubit #3

[Predistort Z3 - tauA1]
datatype: DOUBLE
label: tau A1
unit: s
tooltip: Decay time of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #3

[Predistort Z3 - TA1]
datatype: DOUBLE
label: T A1
unit: s
tooltip: Oscillation period of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #3

[Predistort Z3 - phiA1]
datatype: DOUBLE
label: phi A1
unit: deg
tooltip: Initial phase of second-order IIR filter
section: Predistortion
group: Qubit #3

[Predistort Z3 - B1]
datatype: DOUBLE
label: B1
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #3

[Predistort Z3 - tauB1]
datatype: DOUBLE
label: tau B1
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #3

[Predistort Z3 - B2]
datatype: DOUBLE
label: B2
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #3

[Predistort Z3 - tauB2]
datatype: DOUBLE
label: tau B2
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #3

[Predistort Z3 - B3]
datatype: DOUBLE
label: B3
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #3

[Predistort Z3 - tauB3]
datatype: DOUBLE
label: tau B3
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #3

[Predistort Z3 - B4]
datatype: DOUBLE
label: B4
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #3

[Predistort Z3 - tauB4]
datatype: DOUBLE
label: tau B4
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #3

[Predistort Z3 - tauC]
datatype: DOUBLE
label: tau C
unit: s
tooltip: Time constant for capacitor.
low_lim: 0
section: Predistortion
group: Qubit #3

[Predistort Z3 - leakC]
datatype: DOUBLE
label: leak C
def_value: 0
tooltip: leak voltage of capacitor.
low_lim: 0
high_lim: 1
section: Predistortion
group: Qubit #3

[Predistort Z3 - string]
datatype: STRING
label: Representation string
tooltip: String representation for `Filter`
section: Predistortion
group: Qubit #3

[Predistort Z4 - from string]
datatype: BOOLEAN
label: From representation string
def_value: False
section: Predistortion
group: Qubit #4

[Predistort Z4 - A1]
datatype: DOUBLE
label: A1
tooltip: Amplitude of second-order IIR filter
section: Predistortion
group: Qubit #4

[Predistort Z4 - tauA1]
datatype: DOUBLE
label: tau A1
unit: s
tooltip: Decay time of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #4

[Predistort Z4 - TA1]
datatype: DOUBLE
label: T A1
unit: s
tooltip: Oscillation period of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #4

[Predistort Z4 - phiA1]
datatype: DOUBLE
label: phi A1
unit: deg
tooltip: Initial phase of second-order IIR filter
section: Predistortion
group: Qubit #4

[Predistort Z4 - B1]
datatype: DOUBLE
label: B1
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #4

[Predistort Z4 - tauB1]
datatype: DOUBLE
label: tau B1
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #4

[Predistort Z4 - B2]
datatype: DOUBLE
label: B2
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #4

[Predistort Z4 - tauB2]
datatype: DOUBLE
label: tau B2
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #4

[Predistort Z4 - B3]
datatype: DOUBLE
label: B3
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #4

[Predistort Z4 - tauB3]
datatype: DOUBLE
label: tau B3
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #4

[Predistort Z4 - B4]
datatype: DOUBLE
label: B4
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #4

[Predistort Z4 - tauB4]
datatype: DOUBLE
label: tau B4
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #4

[Predistort Z4 - tauC]
datatype: DOUBLE
label: tau C
unit: s
tooltip: Time constant for capacitor.
low_lim: 0
section: Predistortion
group: Qubit #4

[Predistort Z4 - leakC]
datatype: DOUBLE
label: leak C
def_value: 0
tooltip: leak voltage of capacitor.
low_lim: 0
high_lim: 1
section: Predistortion
group: Qubit #4

[Predistort Z4 - string]
datatype: STRING
label: Representation string
tooltip: String representation for `Filter`
section: Predistortion
group: Qubit #4

[Predistort Z5 - from string]
datatype: BOOLEAN
label: From representation string
def_value: False
section: Predistortion
group: Qubit #5

[Predistort Z5 - A1]
datatype: DOUBLE
label: A1
tooltip: Amplitude of second-order IIR filter
section: Predistortion
group: Qubit #5

[Predistort Z5 - tauA1]
datatype: DOUBLE
label: tau A1
unit: s
tooltip: Decay time of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #5

[Predistort Z5 - TA1]
datatype: DOUBLE
label: T A1
unit: s
tooltip: Oscillation period of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #5

[Predistort Z5 - phiA1]
datatype: DOUBLE
label: phi A1
unit: deg
tooltip: Initial phase of second-order IIR filter
section: Predistortion
group: Qubit #5

[Predistort Z5 - B1]
datatype: DOUBLE
label: B1
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #5

[Predistort Z5 - tauB1]
datatype: DOUBLE
label: tau B1
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #5

[Predistort Z5 - B2]
datatype: DOUBLE
label: B2
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #5

[Predistort Z5 - tauB2]
datatype: DOUBLE
label: tau B2
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #5

[Predistort Z5 - B3]
datatype: DOUBLE
label: B3
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #5

[Predistort Z5 - tauB3]
datatype: DOUBLE
label: tau B3
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #5

[Predistort Z5 - B4]
datatype: DOUBLE
label: B4
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #5

[Predistort Z5 - tauB4]
datatype: DOUBLE
label: tau B4
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #5

[Predistort Z5 - tauC]
datatype: DOUBLE
label: tau C
unit: s
tooltip: Time constant for capacitor.
low_lim: 0
section: Predistortion
group: Qubit #5

[Predistort Z5 - leakC]
datatype: DOUBLE
label: leak C
def_value: 0
tooltip: leak voltage of capacitor.
low_lim: 0
high_lim: 1
section: Predistortion
group: Qubit #5

[Predistort Z5 - string]
datatype: STRING
label: Representation string
tooltip: String representation for `Filter`
section: Predistortion
group: Qubit #5

[Predistort Z6 - from string]
datatype: BOOLEAN
label: From representation string
def_value: False
section: Predistortion
group: Qubit #6

[Predistort Z6 - A1]
datatype: DOUBLE
label: A1
tooltip: Amplitude of second-order IIR filter
section: Predistortion
group: Qubit #6

[Predistort Z6 - tauA1]
datatype: DOUBLE
label: tau A1
unit: s
tooltip: Decay time of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #6

[Predistort Z6 - TA1]
datatype: DOUBLE
label: T A1
unit: s
tooltip: Oscillation period of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #6

[Predistort Z6 - phiA1]
datatype: DOUBLE
label: phi A1
unit: deg
tooltip: Initial phase of second-order IIR filter
section: Predistortion
group: Qubit #6

[Predistort Z6 - B1]
datatype: DOUBLE
label: B1
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #6

[Predistort Z6 - tauB1]
datatype: DOUBLE
label: tau B1
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #6

[Predistort Z6 - B2]
datatype: DOUBLE
label: B2
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #6

[Predistort Z6 - tauB2]
datatype: DOUBLE
label: tau B2
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #6

[Predistort Z6 - B3]
datatype: DOUBLE
label: B3
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #6

[Predistort Z6 - tauB3]
datatype: DOUBLE
label: tau B3
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #6

[Predistort Z6 - B4]
datatype: DOUBLE
label: B4
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #6

[Predistort Z6 - tauB4]
datatype: DOUBLE
label: tau B4
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #6

[Predistort Z6 - tauC]
datatype: DOUBLE
label: tau C
unit: s
tooltip: Time constant for capacitor.
low_lim: 0
section: Predistortion
group: Qubit #6

[Predistort Z6 - leakC]
datatype: DOUBLE
label: leak C
def_value: 0
tooltip: leak voltage of capacitor.
low_lim: 0
high_lim: 1
section: Predistortion
group: Qubit #6

[Predistort Z6 - string]
datatype: STRING
label: Representation string
tooltip: String representation for `Filter`
section: Predistortion
group: Qubit #6

[Predistort Z7 - from string]
datatype: BOOLEAN
label: From representation string
def_value: False
section: Predistortion
group: Qubit #7

[Predistort Z7 - A1]
datatype: DOUBLE
label: A1
tooltip: Amplitude of second-order IIR filter
section: Predistortion
group: Qubit #7

[Predistort Z7 - tauA1]
datatype: DOUBLE
label: tau A1
unit: s
tooltip: Decay time of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #7

[Predistort Z7 - TA1]
datatype: DOUBLE
label: T A1
unit: s
tooltip: Oscillation period of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #7

[Predistort Z7 - phiA1]
datatype: DOUBLE
label: phi A1
unit: deg
tooltip: Initial phase of second-order IIR filter
section: Predistortion
group: Qubit #7

[Predistort Z7 - B1]
datatype: DOUBLE
label: B1
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #7

[Predistort Z7 - tauB1]
datatype: DOUBLE
label: tau B1
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #7

[Predistort Z7 - B2]
datatype: DOUBLE
label: B2
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #7

[Predistort Z7 - tauB2]
datatype: DOUBLE
label: tau B2
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #7

[Predistort Z7 - B3]
datatype: DOUBLE
label: B3
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #7

[Predistort Z7 - tauB3]
datatype: DOUBLE
label: tau B3
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #7

[Predistort Z7 - B4]
datatype: DOUBLE
label: B4
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #7

[Predistort Z7 - tauB4]
datatype: DOUBLE
label: tau B4
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #7

[Predistort Z7 - tauC]
datatype: DOUBLE
label: tau C
unit: s
tooltip: Time constant for capacitor.
low_lim: 0
section: Predistortion
group: Qubit #7

[Predistort Z7 - leakC]
datatype: DOUBLE
label: leak C
def_value: 0
tooltip: leak voltage of capacitor.
low_lim: 0
high_lim: 1
section: Predistortion
group: Qubit #7

[Predistort Z7 - string]
datatype: STRING
label: Representation string
tooltip: String representation for `Filter`
section: Predistortion
group: Qubit #7

[Predistort Z8 - from string]
datatype: BOOLEAN
label: From representation string
def_value: False
section: Predistortion
group: Qubit #8

[Predistort Z8 - A1]
datatype: DOUBLE
label: A1
tooltip: Amplitude of second-order IIR filter
section: Predistortion
group: Qubit #8

[Predistort Z8 - tauA1]
datatype: DOUBLE
label: tau A1
unit: s
tooltip: Decay time of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #8

[Predistort Z8 - TA1]
datatype: DOUBLE
label: T A1
unit: s
tooltip: Oscillation period of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #8

[Predistort Z8 - phiA1]
datatype: DOUBLE
label: phi A1
unit: deg
tooltip: Initial phase of second-order IIR filter
section: Predistortion
group: Qubit #8

[Predistort Z8 - B1]
datatype: DOUBLE
label: B1
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #8

[Predistort Z8 - tauB1]
datatype: DOUBLE
label: tau B1
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #8

[Predistort Z8 - B2]
datatype: DOUBLE
label: B2
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #8

[Predistort Z8 - tauB2]
datatype: DOUBLE
label: tau B2
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #8

[Predistort Z8 - B3]
datatype: DOUBLE
label: B3
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #8

[Predistort Z8 - tauB3]
datatype: DOUBLE
label: tau B3
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #8

[Predistort Z8 - B4]
datatype: DOUBLE
label: B4
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #8

[Predistort Z8 - tauB4]
datatype: DOUBLE
label: tau B4
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #8

[Predistort Z8 - tauC]
datatype: DOUBLE
label: tau C
unit: s
tooltip: Time constant for capacitor.
low_lim: 0
section: Predistortion
group: Qubit #8

[Predistort Z8 - leakC]
datatype: DOUBLE
label: leak C
def_value: 0
tooltip: leak voltage of capacitor.
low_lim: 0
high_lim: 1
section: Predistortion
group: Qubit #8

[Predistort Z8 - string]
datatype: STRING
label: Representation string
tooltip: String representation for `Filter`
section: Predistortion
group: Qubit #8

[Predistort Z9 - from string]
datatype: BOOLEAN
label: From representation string
def_value: False
section: Predistortion
group: Qubit #9

[Predistort Z9 - A1]
datatype: DOUBLE
label: A1
tooltip: Amplitude of second-order IIR filter
section: Predistortion
group: Qubit #9

[Predistort Z9 - tauA1]
datatype: DOUBLE
label: tau A1
unit: s
tooltip: Decay time of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #9

[Predistort Z9 - TA1]
datatype: DOUBLE
label: T A1
unit: s
tooltip: Oscillation period of second-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #9

[Predistort Z9 - phiA1]
datatype: DOUBLE
label: phi A1
unit: deg
tooltip: Initial phase of second-order IIR filter
section: Predistortion
group: Qubit #9

[Predistort Z9 - B1]
datatype: DOUBLE
label: B1
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #9

[Predistort Z9 - tauB1]
datatype: DOUBLE
label: tau B1
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #9

[Predistort Z9 - B2]
datatype: DOUBLE
label: B2
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #9

[Predistort Z9 - tauB2]
datatype: DOUBLE
label: tau B2
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #9

[Predistort Z9 - B3]
datatype: DOUBLE
label: B3
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #9

[Predistort Z9 - tauB3]
datatype: DOUBLE
label: tau B3
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #9

[Predistort Z9 - B4]
datatype: DOUBLE
label: B4
tooltip: Amplitude of first-order IIR filter
section: Predistortion
group: Qubit #9

[Predistort Z9 - tauB4]
datatype: DOUBLE
label: tau B4
unit: s
tooltip: Decay time of first-order IIR filter
low_lim: 0
section: Predistortion
group: Qubit #9

[Predistort Z9 - tauC]
datatype: DOUBLE
label: tau C
unit: s
tooltip: Time constant for capacitor.
low_lim: 0
section: Predistortion
group: Qubit #9

[Predistort Z9 - leakC]
datatype: DOUBLE
label: leak C
def_value: 0
tooltip: leak voltage of capacitor.
low_lim: 0
high_lim: 1
section: Predistortion
group: Qubit #9

[Predistort Z9 - string]
datatype: STRING
label: Representation string
tooltip: String representation for `Filter`
section: Predistortion
group: Qubit #9

[Compensate cross-talk]
datatype: BOOLEAN
def_value: False
section: Cross-talk
group: Cross-talk

[Cross talk - From file]
datatype: BOOLEAN
label: From file
def_value: False
section: Cross-talk
group: Cross-talk

[Cross-talk (CT) matrix]
datatype: PATH
state_quant: Cross talk - From file
state_value: True
section: Cross-talk
group: Cross-talk

[Calculate inverse matrix]
datatype: BOOLEAN
def_value: True
section: Cross-talk
group: Cross-talk

[CT-matrix #1-#2]
datatype: DOUBLE
def_value: 0
state_quant: Cross talk - From file
state_value: False
section: Cross-talk
group: Cross-talk

[CT-matrix #1-#3]
datatype: DOUBLE
def_value: 0
state_quant: Cross talk - From file
state_value: False
section: Cross-talk
group: Cross-talk

[CT-matrix #2-#1]
datatype: DOUBLE
def_value: 0
state_quant: Cross talk - From file
state_value: False
section: Cross-talk
group: Cross-talk

[CT-matrix #2-#3]
datatype: DOUBLE
def_value: 0
state_quant: Cross talk - From file
state_value: False
section: Cross-talk
group: Cross-talk

[CT-matrix #3-#1]
datatype: DOUBLE
def_value: 0
state_quant: Cross talk - From file
state_value: False
section: Cross-talk
group: Cross-talk

[CT-matrix #3-#2]
datatype: DOUBLE
def_value: 0
state_quant: Cross talk - From file
state_value: False
section: Cross-talk
group: Cross-talk

[Uniform readout amplitude]
datatype: BOOLEAN
label: Uniform amplitude
def_value: True
section: Readout
group: Readout

[Readout amplitude]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 0.1
show_in_measurement_dlg: True
state_quant: Uniform readout amplitude
state_value: True
section: Readout
group: Readout

[Readout relative amplitude 1]
datatype: DOUBLE
label: Relative amplitude 1
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform readout amplitude
state_value: True
section: Readout
group: Readout

[Readout relative amplitude 2]
datatype: DOUBLE
label: Relative amplitude 2
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform readout amplitude
state_value: True
section: Readout
group: Readout

[Readout relative amplitude 3]
datatype: DOUBLE
label: Relative amplitude 3
def_value: 1
show_in_measurement_dlg: True
state_quant: Uniform readout amplitude
state_value: True
section: Readout
group: Readout

[Uniform readout pulse shape]
datatype: BOOLEAN
label: Uniform pulse shape
def_value: True
section: Readout
group: Readout

[Readout duration 1]
datatype: DOUBLE
label: Duration 1
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: True
section: Readout
group: Readout

[Readout duration 2]
datatype: DOUBLE
label: Duration 2
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: True
section: Readout
group: Readout

[Readout duration 3]
datatype: DOUBLE
label: Duration 3
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: True
section: Readout
group: Readout

[Match main sequence waveform size]
datatype: BOOLEAN
def_value: False
tooltip: If checked, the readout waveform will have the same number of point as the main pulse waveforms
section: Readout
group: Readout

[Distribute readout phases]
datatype: BOOLEAN
def_value: False
tooltip: If checked, the readout tone phases will be distributed to avoid large peak-to-peak voltages
section: Readout
group: Readout

[Readout delay]
datatype: DOUBLE
unit: s
show_in_measurement_dlg: True
section: Readout
group: Readout

[Readout I/Q ratio]
datatype: DOUBLE
def_value: 1
tooltip: Ratio of I/Q voltages to compensate for I/Q mixer arm imbalance.
section: Readout
group: Readout

[Readout offset - I]
datatype: DOUBLE
label: Offset I
unit: V
def_value: 0
tooltip: Readout mixer I offset
section: Readout
group: Readout

[Readout offset - Q]
datatype: DOUBLE
label: Offset Q
unit: V
def_value: 0
tooltip: Readout mixer Q offset
section: Readout
group: Readout

[Readout IQ skew]
datatype: DOUBLE
label: IQ skew
unit: deg
def_value: 0
tooltip: Readout IQ mixer phase skew
section: Readout
group: Readout

[Readout enabled #1]
datatype: BOOLEAN
label: Enabled
def_value: True
section: Readout
group: Qubit #1

[Readout amplitude #1]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 0.1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #1

[Readout relative amplitude 1 #1]
datatype: DOUBLE
label: Relative amplitude 1
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #1

[Readout relative amplitude 2 #1]
datatype: DOUBLE
label: Relative amplitude 2
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #1

[Readout relative amplitude 3 #1]
datatype: DOUBLE
label: Relative amplitude 3
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #1

[Readout duration 1 #1]
datatype: DOUBLE
label: Duration 1
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #1

[Readout duration 2 #1]
datatype: DOUBLE
label: Duration 2
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #1

[Readout duration 3 #1]
datatype: DOUBLE
label: Duration 3
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #1

[Readout frequency #1]
datatype: DOUBLE
label: Frequency
unit: Hz
def_value: 0
section: Readout
group: Qubit #1

[Readout enabled #2]
datatype: BOOLEAN
label: Enabled
def_value: True
section: Readout
group: Qubit #2

[Readout amplitude #2]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 0.1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #2

[Readout relative amplitude 1 #2]
datatype: DOUBLE
label: Relative amplitude 1
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #2

[Readout relative amplitude 2 #2]
datatype: DOUBLE
label: Relative amplitude 2
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #2

[Readout relative amplitude 3 #2]
datatype: DOUBLE
label: Relative amplitude 3
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #2

[Readout duration 1 #2]
datatype: DOUBLE
label: Duration 1
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #2

[Readout duration 2 #2]
datatype: DOUBLE
label: Duration 2
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #2

[Readout duration 3 #2]
datatype: DOUBLE
label: Duration 3
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #2

[Readout frequency #2]
datatype: DOUBLE
label: Frequency
unit: Hz
def_value: 0
section: Readout
group: Qubit #2

[Readout enabled #3]
datatype: BOOLEAN
label: Enabled
def_value: True
section: Readout
group: Qubit #3

[Readout amplitude #3]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 0.1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #3

[Readout relative amplitude 1 #3]
datatype: DOUBLE
label: Relative amplitude 1
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #3

[Readout relative amplitude 2 #3]
datatype: DOUBLE
label: Relative amplitude 2
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #3

[Readout relative amplitude 3 #3]
datatype: DOUBLE
label: Relative amplitude 3
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #3

[Readout duration 1 #3]
datatype: DOUBLE
label: Duration 1
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #3

[Readout duration 2 #3]
datatype: DOUBLE
label: Duration 2
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #3

[Readout duration 3 #3]
datatype: DOUBLE
label: Duration 3
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #3

[Readout frequency #3]
datatype: DOUBLE
label: Frequency
unit: Hz
def_value: 0
section: Readout
group: Qubit #3

[Readout enabled #4]
datatype: BOOLEAN
label: Enabled
def_value: True
section: Readout
group: Qubit #4

[Readout amplitude #4]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 0.1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #4

[Readout relative amplitude 1 #4]
datatype: DOUBLE
label: Relative amplitude 1
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #4

[Readout relative amplitude 2 #4]
datatype: DOUBLE
label: Relative amplitude 2
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #4

[Readout relative amplitude 3 #4]
datatype: DOUBLE
label: Relative amplitude 3
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #4

[Readout duration 1 #4]
datatype: DOUBLE
label: Duration 1
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #4

[Readout duration 2 #4]
datatype: DOUBLE
label: Duration 2
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #4

[Readout duration 3 #4]
datatype: DOUBLE
label: Duration 3
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #4

[Readout frequency #4]
datatype: DOUBLE
label: Frequency
unit: Hz
def_value: 0
section: Readout
group: Qubit #4

[Readout enabled #5]
datatype: BOOLEAN
label: Enabled
def_value: True
section: Readout
group: Qubit #5

[Readout amplitude #5]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 0.1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #5

[Readout relative amplitude 1 #5]
datatype: DOUBLE
label: Relative amplitude 1
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #5

[Readout relative amplitude 2 #5]
datatype: DOUBLE
label: Relative amplitude 2
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #5

[Readout relative amplitude 3 #5]
datatype: DOUBLE
label: Relative amplitude 3
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #5

[Readout duration 1 #5]
datatype: DOUBLE
label: Duration 1
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #5

[Readout duration 2 #5]
datatype: DOUBLE
label: Duration 2
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #5

[Readout duration 3 #5]
datatype: DOUBLE
label: Duration 3
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #5

[Readout frequency #5]
datatype: DOUBLE
label: Frequency
unit: Hz
def_value: 0
section: Readout
group: Qubit #5

[Readout enabled #6]
datatype: BOOLEAN
label: Enabled
def_value: True
section: Readout
group: Qubit #6

[Readout amplitude #6]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 0.1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #6

[Readout relative amplitude 1 #6]
datatype: DOUBLE
label: Relative amplitude 1
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #6

[Readout relative amplitude 2 #6]
datatype: DOUBLE
label: Relative amplitude 2
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #6

[Readout relative amplitude 3 #6]
datatype: DOUBLE
label: Relative amplitude 3
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #6

[Readout duration 1 #6]
datatype: DOUBLE
label: Duration 1
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #6

[Readout duration 2 #6]
datatype: DOUBLE
label: Duration 2
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #6

[Readout duration 3 #6]
datatype: DOUBLE
label: Duration 3
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #6

[Readout frequency #6]
datatype: DOUBLE
label: Frequency
unit: Hz
def_value: 0
section: Readout
group: Qubit #6

[Readout enabled #7]
datatype: BOOLEAN
label: Enabled
def_value: True
section: Readout
group: Qubit #7

[Readout amplitude #7]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 0.1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #7

[Readout relative amplitude 1 #7]
datatype: DOUBLE
label: Relative amplitude 1
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #7

[Readout relative amplitude 2 #7]
datatype: DOUBLE
label: Relative amplitude 2
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #7

[Readout relative amplitude 3 #7]
datatype: DOUBLE
label: Relative amplitude 3
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #7

[Readout duration 1 #7]
datatype: DOUBLE
label: Duration 1
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #7

[Readout duration 2 #7]
datatype: DOUBLE
label: Duration 2
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #7

[Readout duration 3 #7]
datatype: DOUBLE
label: Duration 3
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #7

[Readout frequency #7]
datatype: DOUBLE
label: Frequency
unit: Hz
def_value: 0
section: Readout
group: Qubit #7

[Readout enabled #8]
datatype: BOOLEAN
label: Enabled
def_value: True
section: Readout
group: Qubit #8

[Readout amplitude #8]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 0.1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #8

[Readout relative amplitude 1 #8]
datatype: DOUBLE
label: Relative amplitude 1
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #8

[Readout relative amplitude 2 #8]
datatype: DOUBLE
label: Relative amplitude 2
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #8

[Readout relative amplitude 3 #8]
datatype: DOUBLE
label: Relative amplitude 3
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #8

[Readout duration 1 #8]
datatype: DOUBLE
label: Duration 1
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #8

[Readout duration 2 #8]
datatype: DOUBLE
label: Duration 2
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #8

[Readout duration 3 #8]
datatype: DOUBLE
label: Duration 3
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #8

[Readout frequency #8]
datatype: DOUBLE
label: Frequency
unit: Hz
def_value: 0
section: Readout
group: Qubit #8

[Readout enabled #9]
datatype: BOOLEAN
label: Enabled
def_value: True
section: Readout
group: Qubit #9

[Readout amplitude #9]
datatype: DOUBLE
label: Amplitude
unit: V
def_value: 0.1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #9

[Readout relative amplitude 1 #9]
datatype: DOUBLE
label: Relative amplitude 1
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #9

[Readout relative amplitude 2 #9]
datatype: DOUBLE
label: Relative amplitude 2
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #9

[Readout relative amplitude 3 #9]
datatype: DOUBLE
label: Relative amplitude 3
def_value: 1
state_quant: Uniform readout amplitude
state_value: False
section: Readout
group: Qubit #9

[Readout duration 1 #9]
datatype: DOUBLE
label: Duration 1
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #9

[Readout duration 2 #9]
datatype: DOUBLE
label: Duration 2
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #9

[Readout duration 3 #9]
datatype: DOUBLE
label: Duration 3
unit: s
def_value: 2e-06
low_lim: 0
state_quant: Uniform readout pulse shape
state_value: False
section: Readout
group: Qubit #9

[Readout frequency #9]
datatype: DOUBLE
label: Frequency
unit: Hz
def_value: 0
section: Readout
group: Qubit #9

[Predistort readout waveform]
datatype: BOOLEAN
def_value: False
tooltip: If checked, the readout waveform will be predistorted to increase the rise time
section: Readout
group: Readout predistortion

[Resonator linewidth]
datatype: DOUBLE
unit: Hz
def_value: 1000000.0
tooltip: Measured resonator linewidth
state_quant: Predistort readout waveform
state_value: True
section: Readout
group: Readout predistortion

[Target rise time]
datatype: DOUBLE
unit: s
def_value: 5e-08
tooltip: Intended resonator ring-up time
state_quant: Predistort readout waveform
state_value: True
section: Readout
group: Readout predistortion

[Generate readout trig]
datatype: BOOLEAN
section: Readout
group: Readout trig

[Readout trig amplitude]
datatype: DOUBLE
unit: V
def_value: 1
section: Readout
group: Readout trig

[Readout trig duration]
datatype: DOUBLE
unit: s
def_value: 2e-08
section: Readout
group: Readout trig

[Swap IQ]
datatype: BOOLEAN
section: Output
group: Output

[Generate gate]
datatype: BOOLEAN
def_value: True
section: Output
group: Microwave gate switch

[Uniform gate]
datatype: BOOLEAN
def_value: False
state_quant: Generate gate
state_value: True
section: Output
group: Microwave gate switch

[Gate delay]
datatype: DOUBLE
unit: s
def_value: -6e-08
low_lim: -1e-06
high_lim: 1e-06
section: Output
group: Microwave gate switch

[Gate overlap]
datatype: DOUBLE
unit: s
def_value: 2e-08
section: Output
group: Microwave gate switch

[Minimal gate time]
datatype: DOUBLE
unit: s
def_value: 2e-08
section: Output
group: Microwave gate switch

[Filter gate waveforms]
datatype: BOOLEAN
def_value: False
section: Output
group: Output filters

[Gate filter]
datatype: COMBO
def_value: Hanning
state_quant: Filter gate waveforms
state_value: True
combo_def_1: Rectangular
combo_def_2: Bartlett
combo_def_3: Blackman
combo_def_4: Hamming
combo_def_5: Hanning
combo_def_6: Kaiser
section: Output
group: Output filters

[Gate - Filter size]
datatype: DOUBLE
label: Filter size
def_value: 5
low_lim: 1
state_quant: Filter gate waveforms
state_value: True
section: Output
group: Output filters

[Gate - Kaiser beta]
datatype: DOUBLE
label: Kaiser beta parameter
def_value: 14
state_quant: Gate filter
state_value_1: Kaiser
section: Output
group: Output filters

[Filter Z waveforms]
datatype: BOOLEAN
def_value: False
section: Output
group: Output filters

[Z filter]
datatype: COMBO
def_value: Hanning
state_quant: Filter Z waveforms
state_value: True
combo_def_1: Rectangular
combo_def_2: Bartlett
combo_def_3: Blackman
combo_def_4: Hamming
combo_def_5: Hanning
combo_def_6: Kaiser
section: Output
group: Output filters

[Z - Filter size]
datatype: DOUBLE
label: Filter size
def_value: 5
low_lim: 1
state_quant: Filter Z waveforms
state_value: True
section: Output
group: Output filters

[Z - Kaiser beta]
datatype: DOUBLE
label: Kaiser beta parameter
def_value: 14
state_quant: Z filter
state_value_1: Kaiser
section: Output
group: Output filters

[Trace - I1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
section: Output
group: Traces

[Trace - Q1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
section: Output
group: Traces

[Trace - G1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
section: Output
group: Traces

[Trace - Z1]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
section: Output
group: Traces

[Trace - I2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Output
group: Traces

[Trace - Q2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Output
group: Traces

[Trace - G2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Output
group: Traces

[Trace - Z2]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Output
group: Traces

[Trace - I3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Output
group: Traces

[Trace - Q3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Output
group: Traces

[Trace - G3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Output
group: Traces

[Trace - Z3]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Output
group: Traces

[Trace - I4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
section: Output
group: Traces

[Trace - Q4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
section: Output
group: Traces

[Trace - G4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
section: Output
group: Traces

[Trace - Z4]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
section: Output
group: Traces

[Trace - I5]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
section: Output
group: Traces

[Trace - Q5]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
section: Output
group: Traces

[Trace - G5]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
section: Output
group: Traces

[Trace - Z5]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
section: Output
group: Traces

[Trace - I6]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
section: Output
group: Traces

[Trace - Q6]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
section: Output
group: Traces

[Trace - G6]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
section: Output
group: Traces

[Trace - Z6]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
section: Output
group: Traces

[Trace - I7]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 7
state_value_2: 8
state_value_3: 9
section: Output
group: Traces

[Trace - Q7]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 7
state_value_2: 8
state_value_3: 9
section: Output
group: Traces

[Trace - G7]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 7
state_value_2: 8
state_value_3: 9
section: Output
group: Traces

[Trace - Z7]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 7
state_value_2: 8
state_value_3: 9
section: Output
group: Traces

[Trace - I8]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 8
state_value_2: 9
section: Output
group: Traces

[Trace - Q8]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 8
state_value_2: 9
section: Output
group: Traces

[Trace - G8]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 8
state_value_2: 9
section: Output
group: Traces

[Trace - Z8]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 8
state_value_2: 9
section: Output
group: Traces

[Trace - I9]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 9
section: Output
group: Traces

[Trace - Q9]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 9
section: Output
group: Traces

[Trace - G9]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 9
section: Output
group: Traces

[Trace - Z9]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 9
section: Output
group: Traces

[Trace - Readout trig]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
section: Output
group: Traces

[Trace - Readout I]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
section: Output
group: Traces

[Trace - Readout Q]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True
section: Output
group: Traces

[Demodulation - Skip]
datatype: DOUBLE
label: Skip start
unit: s
def_value: 0
section: Demodulation
group: Demodulation

[Demodulation - Length]
datatype: DOUBLE
label: Length
unit: s
def_value: 1e-06
section: Demodulation
group: Demodulation

[Demodulation - Frequency offset]
datatype: DOUBLE
label: Frequency offset
unit: Hz
def_value: 0
tooltip: Frequency difference between LO used for up- and downconversion, f_down - f_up
section: Demodulation
group: Demodulation

[Demodulation - Number of records]
datatype: DOUBLE
label: Number of records
def_value: 1
tooltip: NB!  This will be removed in future versions, records should be set by input waveform
low_lim: 1
section: Demodulation
group: Demodulation

[Use phase reference signal]
datatype: BOOLEAN
def_value: True
section: Demodulation
group: Demodulation

[Demodulation - IQ]
datatype: BOOLEAN
def_value: False
section: Demodulation
group: Demodulation

[Demodulation - Input]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Demodulation - IQ
state_value: False
section: Demodulation
group: Demodulation

[Demodulation - Input I]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Demodulation - IQ
state_value: True
section: Demodulation
group: Demodulation

[Demodulation - Input Q]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
state_quant: Demodulation - IQ
state_value: True
section: Demodulation
group: Demodulation

[Demodulation - Reference]
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: WRITE
show_in_measurement_dlg: True
section: Demodulation
group: Demodulation

[Voltage, QB1]
datatype: COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
section: Demodulation
group: Demodulation

[Voltage, QB2]
datatype: COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Demodulation
group: Demodulation

[Voltage, QB3]
datatype: COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Demodulation
group: Demodulation

[Voltage, QB4]
datatype: COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
section: Demodulation
group: Demodulation

[Voltage, QB5]
datatype: COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
section: Demodulation
group: Demodulation

[Voltage, QB6]
datatype: COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
section: Demodulation
group: Demodulation

[Voltage, QB7]
datatype: COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 7
state_value_2: 8
state_value_3: 9
section: Demodulation
group: Demodulation

[Voltage, QB8]
datatype: COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 8
state_value_2: 9
section: Demodulation
group: Demodulation

[Voltage, QB9]
datatype: COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 9
section: Demodulation
group: Demodulation

[Single-shot, QB1]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
section: Demodulation
group: Demodulation

[Single-shot, QB2]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
section: Demodulation
group: Demodulation

[Single-shot, QB3]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
section: Demodulation
group: Demodulation

[Single-shot, QB4]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
section: Demodulation
group: Demodulation

[Single-shot, QB5]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
section: Demodulation
group: Demodulation

[Single-shot, QB6]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
section: Demodulation
group: Demodulation

[Single-shot, QB7]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 7
state_value_2: 8
state_value_3: 9
section: Demodulation
group: Demodulation

[Single-shot, QB8]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 8
state_value_2: 9
section: Demodulation
group: Demodulation

[Single-shot, QB9]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
show_in_measurement_dlg: True
state_quant: Number of qubits
state_value_1: 9
section: Demodulation
group: Demodulation

