[General settings]
name: QuantumCTek_DAQ
version: 0.0.1
driver_path: QuantumCTek_DAQ
interface: Other
support_hardware_loop: False
support_arm: True

[Host MAC address]
datatype: STRING
tooltip: MAC address of host computer
group: Communication

[Sample depth]
datatype: DOUBLE
def_value: 3000
low_lim: 0
high_lim: 18000
show_in_measurement_dlg: True
group: Aquisition

[Trigger count]
datatype: DOUBLE
label: Trigger count
def_value: 1000
low_lim: 1
high_lim: 100000
show_in_measurement_dlg: True
group: Aquisition

[Demodulation]
datatype: BOOLEAN
def_value: True
show_in_measurement_dlg: True
group: Demodulation

[Number of freqs]
datatype: COMBO
def_value: 2
state_quant: Demodulation
state_value: True
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
group: Demodulation

[Uniform window setting]
datatype: BOOLEAN
def_value: True
state_quant: Demodulation
state_value: True
group: Demodulation

[Window start]
datatype: DOUBLE
def_value: 500
tooltip: Start of demodulation window. Should be smaller than `Sample depth`.
low_lim: 0
high_lim: 18000
state_quant: Uniform window setting
state_value: True
group: Demodulation

[Window width]
datatype: DOUBLE
def_value: 1500
tooltip: Width of demodulation window. Should be smaller than `Sample depth`-`Window start`.
low_lim: 8
high_lim: 18000
state_quant: Uniform window setting
state_value: True
group: Demodulation

[Demod freq #1]
datatype: DOUBLE
unit: Hz
def_value: 10000000.0
tooltip: Avoid multiples of 125M. Result might be distorted if absolute value is greater than 300M.
state_quant: Demodulation
state_value: True
group: Demodulation

[Window start #1]
datatype: DOUBLE
def_value: 500
tooltip: Start of demodulation window. Should be smaller than `Sample depth`.
low_lim: 0
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Window width #1]
datatype: DOUBLE
def_value: 1500
tooltip: Width of demodulation window. Should be smaller than `Sample depth`-`Window start`.
low_lim: 8
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Demod freq #2]
datatype: DOUBLE
unit: Hz
def_value: 10000000.0
tooltip: Avoid multiples of 125M. Result might be distorted if absolute value is greater than 300M.
state_quant: Demodulation
state_value: True
group: Demodulation

[Window start #2]
datatype: DOUBLE
def_value: 500
tooltip: Start of demodulation window. Should be smaller than `Sample depth`.
low_lim: 0
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Window width #2]
datatype: DOUBLE
def_value: 1500
tooltip: Width of demodulation window. Should be smaller than `Sample depth`-`Window start`.
low_lim: 8
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Demod freq #3]
datatype: DOUBLE
unit: Hz
def_value: 10000000.0
tooltip: Avoid multiples of 125M. Result might be distorted if absolute value is greater than 300M.
state_quant: Demodulation
state_value: True
group: Demodulation

[Window start #3]
datatype: DOUBLE
def_value: 500
tooltip: Start of demodulation window. Should be smaller than `Sample depth`.
low_lim: 0
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Window width #3]
datatype: DOUBLE
def_value: 1500
tooltip: Width of demodulation window. Should be smaller than `Sample depth`-`Window start`.
low_lim: 8
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Demod freq #4]
datatype: DOUBLE
unit: Hz
def_value: 10000000.0
tooltip: Avoid multiples of 125M. Result might be distorted if absolute value is greater than 300M.
state_quant: Demodulation
state_value: True
group: Demodulation

[Window start #4]
datatype: DOUBLE
def_value: 500
tooltip: Start of demodulation window. Should be smaller than `Sample depth`.
low_lim: 0
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Window width #4]
datatype: DOUBLE
def_value: 1500
tooltip: Width of demodulation window. Should be smaller than `Sample depth`-`Window start`.
low_lim: 8
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Demod freq #5]
datatype: DOUBLE
unit: Hz
def_value: 10000000.0
tooltip: Avoid multiples of 125M. Result might be distorted if absolute value is greater than 300M.
state_quant: Demodulation
state_value: True
group: Demodulation

[Window start #5]
datatype: DOUBLE
def_value: 500
tooltip: Start of demodulation window. Should be smaller than `Sample depth`.
low_lim: 0
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Window width #5]
datatype: DOUBLE
def_value: 1500
tooltip: Width of demodulation window. Should be smaller than `Sample depth`-`Window start`.
low_lim: 8
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Demod freq #6]
datatype: DOUBLE
unit: Hz
def_value: 10000000.0
tooltip: Avoid multiples of 125M. Result might be distorted if absolute value is greater than 300M.
state_quant: Demodulation
state_value: True
group: Demodulation

[Window start #6]
datatype: DOUBLE
def_value: 500
tooltip: Start of demodulation window. Should be smaller than `Sample depth`.
low_lim: 0
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Window width #6]
datatype: DOUBLE
def_value: 1500
tooltip: Width of demodulation window. Should be smaller than `Sample depth`-`Window start`.
low_lim: 8
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Demod freq #7]
datatype: DOUBLE
unit: Hz
def_value: 10000000.0
tooltip: Avoid multiples of 125M. Result might be distorted if absolute value is greater than 300M.
state_quant: Demodulation
state_value: True
group: Demodulation

[Window start #7]
datatype: DOUBLE
def_value: 500
tooltip: Start of demodulation window. Should be smaller than `Sample depth`.
low_lim: 0
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Window width #7]
datatype: DOUBLE
def_value: 1500
tooltip: Width of demodulation window. Should be smaller than `Sample depth`-`Window start`.
low_lim: 8
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Demod freq #8]
datatype: DOUBLE
unit: Hz
def_value: 10000000.0
tooltip: Avoid multiples of 125M. Result might be distorted if absolute value is greater than 300M.
state_quant: Demodulation
state_value: True
group: Demodulation

[Window start #8]
datatype: DOUBLE
def_value: 500
tooltip: Start of demodulation window. Should be smaller than `Sample depth`.
low_lim: 0
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Window width #8]
datatype: DOUBLE
def_value: 1500
tooltip: Width of demodulation window. Should be smaller than `Sample depth`-`Window start`.
low_lim: 8
high_lim: 18000
state_quant: Uniform window setting
state_value: False
group: Demodulation

[Averaged wave I]
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
state_quant: Demodulation
state_value: False
group: Result

[Averaged wave Q]
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
state_quant: Demodulation
state_value: False
group: Result

[Result Vector #1]
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
group: Result

[Averaged #1]
datatype: COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
group: Result

[Result Vector #2]
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
group: Result

[Averaged #2]
datatype: COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
group: Result

[Result Vector #3]
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
group: Result

[Averaged #3]
datatype: COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
group: Result

[Result Vector #4]
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
group: Result

[Averaged #4]
datatype: COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
group: Result

[Result Vector #5]
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
group: Result

[Averaged #5]
datatype: COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
group: Result

[Result Vector #6]
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 6
state_value_2: 7
state_value_3: 8
group: Result

[Averaged #6]
datatype: COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 6
state_value_2: 7
state_value_3: 8
group: Result

[Result Vector #7]
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 7
state_value_2: 8
group: Result

[Averaged #7]
datatype: COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 7
state_value_2: 8
group: Result

[Result Vector #8]
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 8
group: Result

[Averaged #8]
datatype: COMPLEX
permission: READ
state_quant: Number of freqs
state_value_1: 8
group: Result

