#
#
#
#
# This file is generated with write_configuration.py
# Please don't edit this file directly!
# Timestamp: 2020-01-27 16:31:34
#
#
#
#
###############################################################
[General settings]
name: Tektronix AWG5200
version: 1.0.1
driver_path: Tektronix_AWG5200
interface: TCPIP
support_arm: False
support_hardware_loop: True
[Model and options]
model_str_1: 5208
check_model: True
model_id_1: TEKTRONIX,AWG5208
check_options: True
option_cmd: *OPT?
option_str_1: 2.5GS/s Sample Rate
option_str_2: 5GS/s Sample Rate
option_str_3: Sequencing
option_id_1: 25
option_id_2: 50
option_id_3: SEQ
[VISA settings]
use_visa = True
reset: True
timeout: 60
query_instr_errors: False
error_bit_mask: 255
error_cmd: :SYST:ERR?
init:
final:
[Reference]
section: Clock
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Reference In, External 10MHz
combo_def_3: Reference In, External Variable
combo_def_4: Clock In, External Variable
cmd_def_1: INT
cmd_def_2: EFIX
cmd_def_3: EVAR
cmd_def_4: EXT
set_cmd: CLOC:SOUR
[Ext. clock frequency]
section: Clock
unit: Hz
datatype: DOUBLE
def_value: 2.5E9
low_lim: 2.5E9
high_lim: 5E9
set_cmd: CLOC:ECL:FREQ
state_quant: Reference
state_value_1: Clock In, External Variable
[Ext. reference frequency]
section: Clock
unit: Hz
datatype: DOUBLE
def_value: 35E6
low_lim: 35E6
high_lim: 250E6
set_cmd: CLOC:EREF:FREQ
state_quant: Reference
state_value_1: Reference In, External Variable
[Jitter reduction]
section: Clock
datatype: BOOLEAN
def_value: False
set_cmd: CLOC:JITT
state_quant: Reference
state_value_1: Internal
state_value_2: Reference In, External 10MHz
state_value_3: Reference In, External Variable
[Clock out]
section: Clock
datatype: BOOLEAN
def_value: False
set_cmd: CLOC:OUTP
state_quant: Reference
state_value_1: Internal
state_value_2: Reference In, External 10MHz
state_value_3: Reference In, External Variable
[Sample rate]
section: Clock
label: Sample rate
datatype: DOUBLE
unit: Hz
def_value: 2.5E9
low_lim: 298
set_cmd: CLOC:SRAT
state_quant: Reference
state_value_1: Internal
state_value_2: Reference In, External 10MHz
state_value_3: Reference In, External Variable
show_in_measurement_dlg: True
[Internal Trigger - interval]
section: Trigger
group: Internal trigger
label: interval
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 1E-6
high_lim: 10
set_cmd: TRIG:INT
show_in_measurement_dlg: True
[Run]
datatype: BUTTON
tooltip: Set instrument to run mode
set_cmd: AWGC:RUN
show_in_measurement_dlg: True
[Stop]
datatype: BUTTON
tooltip: Set instrument to stop mode
set_cmd: AWGC:STOP
show_in_measurement_dlg: True
[All output off]
datatype: BOOLEAN
def_value: False
set_cmd: OUTP:OFF
[Sequence - Trigger source]
section: Sequence
label: Trigger Source
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: A
combo_def_3: B
cmd_def_1: ITR
cmd_def_2: ATR
cmd_def_3: BTR
[Trigger A - level]
section: Trigger
group: External trigger input A
label: level
datatype: DOUBLE
unit: V
def_value: 1.4
low_lim: -5
high_lim: 5
set_cmd: TRIG:LEV <*>,ATR
get_cmd: TRIG:LEV? ATR
[Trigger A - slope]
section: Trigger
group: External trigger input A
label: slope
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: TRIG:SLOP <*>,ATR
get_cmd: TRIG:SLOP? ATR
[Trigger A - impedance]
section: Trigger
group: External trigger input A
label: impedance
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
combo_def_2: 1 kOhm
cmd_def_1: 50
cmd_def_2: 1000
set_cmd: TRIG:IMP <*>,ATR
get_cmd: TRIG:IMP? ATR
[Trigger A - Send Trig]
section: Trigger
group: External trigger input A
label: Send Trig
datatype: BUTTON
set_cmd: TRIG ATR
[Trigger B - level]
section: Trigger
group: External trigger input B
label: level
datatype: DOUBLE
unit: V
def_value: 1.4
low_lim: -5
high_lim: 5
set_cmd: TRIG:LEV <*>,BTR
get_cmd: TRIG:LEV? BTR
[Trigger B - slope]
section: Trigger
group: External trigger input B
label: slope
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: TRIG:SLOP <*>,BTR
get_cmd: TRIG:SLOP? BTR
[Trigger B - impedance]
section: Trigger
group: External trigger input B
label: impedance
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
combo_def_2: 1 kOhm
cmd_def_1: 50
cmd_def_2: 1000
set_cmd: TRIG:IMP <*>,BTR
get_cmd: TRIG:IMP? BTR
[Trigger B - Send Trig]
section: Trigger
group: External trigger input B
label: Send Trig
datatype: BUTTON
set_cmd: TRIG BTR
[Ch1 - Output]
section: Channel 1
group: Channel
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: OUTP1
[Ch1 - Run mode]
section: Channel 1
group: Channel
label: Run mode
datatype: COMBO
def_value: Triggered
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Triggered Continuous
combo_def_4: Gated
cmd_def_1: CONT
cmd_def_2: TRIG
cmd_def_3: TCON
cmd_def_4: GAT
set_cmd: SOUR1:RMODE
[Ch1 - Trigger Source]
section: Channel 1
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
combo_def_3: Internal
cmd_def_1: ATR
cmd_def_2: BTR
cmd_def_3: ITR
set_cmd: SOUR1:TINP
state_quant: Ch1 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
[Ch1 - Trigger Source Gated]
section: Channel 1
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
cmd_def_1: ATR
cmd_def_2: BTR
set_cmd: SOUR1:TINP
state_quant: Ch1 - Run mode
state_value_1: Gated
[Ch1 - Range]
section: Channel 1
group: Channel
label: Range
datatype: DOUBLE
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
unit: V
set_cmd: SOUR1:VOLT
[Ch1 - Offset]
section: Channel 1
group: Channel
label: Offset
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR1:VOLT:OFFS
[Ch1 - Skew]
section: Channel 1
group: Channel
label: Skew
tooltip: Minimum step is 0.5 ps
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -2E-9
high_lim: 2E-9
set_cmd: SOUR1:SKEW
[Ch1 - DAC]
section: Channel 1
group: Channel
label: DAC resolution
datatype: COMBO
def_value: 16 bit DAC + 0 marker
combo_def_1: 12 bit DAC + 4 marker
combo_def_2: 13 bit DAC + 3 marker
combo_def_3: 14 bit DAC + 2 marker
combo_def_4: 15 bit DAC + 1 marker
combo_def_5: 16 bit DAC + 0 marker
cmd_def_1: 12
cmd_def_2: 13
cmd_def_3: 14
cmd_def_4: 15
cmd_def_5: 16
set_cmd: SOUR1:DAC:RES
[Ch 1]
section: Channel 1
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
show_in_measurement_dlg: True
[Ch1 - Marker 1 High]
section: Channel 1
group: Marker 1
label: Marker 1 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR1:MARK1:VOLT:HIGH
[Ch1 - Marker 1 Low]
section: Channel 1
group: Marker 1
label: Marker 1 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR1:MARK1:VOLT:LOW
[Ch1 - Marker 1 Delay]
section: Channel 1
group: Marker 1
label: Marker 1 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR1:MARK1:DEL
[Ch 1 - Marker 1]
section: Channel 1
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch1 - Marker 2 High]
section: Channel 1
group: Marker 2
label: Marker 2 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR1:MARK2:VOLT:HIGH
[Ch1 - Marker 2 Low]
section: Channel 1
group: Marker 2
label: Marker 2 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR1:MARK2:VOLT:LOW
[Ch1 - Marker 2 Delay]
section: Channel 1
group: Marker 2
label: Marker 2 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR1:MARK2:DEL
[Ch 1 - Marker 2]
section: Channel 1
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch1 - Marker 3 High]
section: Channel 1
group: Marker 3
label: Marker 3 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR1:MARK3:VOLT:HIGH
[Ch1 - Marker 3 Low]
section: Channel 1
group: Marker 3
label: Marker 3 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR1:MARK3:VOLT:LOW
[Ch1 - Marker 3 Delay]
section: Channel 1
group: Marker 3
label: Marker 3 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR1:MARK3:DEL
[Ch 1 - Marker 3]
section: Channel 1
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch1 - Marker 4 High]
section: Channel 1
group: Marker 4
label: Marker 4 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR1:MARK4:VOLT:HIGH
[Ch1 - Marker 4 Low]
section: Channel 1
group: Marker 4
label: Marker 4 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR1:MARK4:VOLT:LOW
[Ch1 - Marker 4 Delay]
section: Channel 1
group: Marker 4
label: Marker 4 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR1:MARK4:DEL
[Ch 1 - Marker 4]
section: Channel 1
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch2 - Output]
section: Channel 2
group: Channel
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: OUTP2
[Ch2 - Run mode]
section: Channel 2
group: Channel
label: Run mode
datatype: COMBO
def_value: Triggered
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Triggered Continuous
combo_def_4: Gated
cmd_def_1: CONT
cmd_def_2: TRIG
cmd_def_3: TCON
cmd_def_4: GAT
set_cmd: SOUR2:RMODE
[Ch2 - Trigger Source]
section: Channel 2
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
combo_def_3: Internal
cmd_def_1: ATR
cmd_def_2: BTR
cmd_def_3: ITR
set_cmd: SOUR2:TINP
state_quant: Ch2 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
[Ch2 - Trigger Source Gated]
section: Channel 2
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
cmd_def_1: ATR
cmd_def_2: BTR
set_cmd: SOUR2:TINP
state_quant: Ch2 - Run mode
state_value_1: Gated
[Ch2 - Range]
section: Channel 2
group: Channel
label: Range
datatype: DOUBLE
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
unit: V
set_cmd: SOUR2:VOLT
[Ch2 - Offset]
section: Channel 2
group: Channel
label: Offset
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR2:VOLT:OFFS
[Ch2 - Skew]
section: Channel 2
group: Channel
label: Skew
tooltip: Minimum step is 0.5 ps
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -2E-9
high_lim: 2E-9
set_cmd: SOUR2:SKEW
[Ch2 - DAC]
section: Channel 2
group: Channel
label: DAC resolution
datatype: COMBO
def_value: 16 bit DAC + 0 marker
combo_def_1: 12 bit DAC + 4 marker
combo_def_2: 13 bit DAC + 3 marker
combo_def_3: 14 bit DAC + 2 marker
combo_def_4: 15 bit DAC + 1 marker
combo_def_5: 16 bit DAC + 0 marker
cmd_def_1: 12
cmd_def_2: 13
cmd_def_3: 14
cmd_def_4: 15
cmd_def_5: 16
set_cmd: SOUR2:DAC:RES
[Ch 2]
section: Channel 2
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
show_in_measurement_dlg: True
[Ch2 - Marker 1 High]
section: Channel 2
group: Marker 1
label: Marker 1 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR2:MARK1:VOLT:HIGH
[Ch2 - Marker 1 Low]
section: Channel 2
group: Marker 1
label: Marker 1 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR2:MARK1:VOLT:LOW
[Ch2 - Marker 1 Delay]
section: Channel 2
group: Marker 1
label: Marker 1 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR2:MARK1:DEL
[Ch 2 - Marker 1]
section: Channel 2
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch2 - Marker 2 High]
section: Channel 2
group: Marker 2
label: Marker 2 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR2:MARK2:VOLT:HIGH
[Ch2 - Marker 2 Low]
section: Channel 2
group: Marker 2
label: Marker 2 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR2:MARK2:VOLT:LOW
[Ch2 - Marker 2 Delay]
section: Channel 2
group: Marker 2
label: Marker 2 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR2:MARK2:DEL
[Ch 2 - Marker 2]
section: Channel 2
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch2 - Marker 3 High]
section: Channel 2
group: Marker 3
label: Marker 3 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR2:MARK3:VOLT:HIGH
[Ch2 - Marker 3 Low]
section: Channel 2
group: Marker 3
label: Marker 3 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR2:MARK3:VOLT:LOW
[Ch2 - Marker 3 Delay]
section: Channel 2
group: Marker 3
label: Marker 3 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR2:MARK3:DEL
[Ch 2 - Marker 3]
section: Channel 2
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch2 - Marker 4 High]
section: Channel 2
group: Marker 4
label: Marker 4 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR2:MARK4:VOLT:HIGH
[Ch2 - Marker 4 Low]
section: Channel 2
group: Marker 4
label: Marker 4 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR2:MARK4:VOLT:LOW
[Ch2 - Marker 4 Delay]
section: Channel 2
group: Marker 4
label: Marker 4 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR2:MARK4:DEL
[Ch 2 - Marker 4]
section: Channel 2
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch3 - Output]
section: Channel 3
group: Channel
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: OUTP3
[Ch3 - Run mode]
section: Channel 3
group: Channel
label: Run mode
datatype: COMBO
def_value: Triggered
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Triggered Continuous
combo_def_4: Gated
cmd_def_1: CONT
cmd_def_2: TRIG
cmd_def_3: TCON
cmd_def_4: GAT
set_cmd: SOUR3:RMODE
[Ch3 - Trigger Source]
section: Channel 3
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
combo_def_3: Internal
cmd_def_1: ATR
cmd_def_2: BTR
cmd_def_3: ITR
set_cmd: SOUR3:TINP
state_quant: Ch3 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
[Ch3 - Trigger Source Gated]
section: Channel 3
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
cmd_def_1: ATR
cmd_def_2: BTR
set_cmd: SOUR3:TINP
state_quant: Ch3 - Run mode
state_value_1: Gated
[Ch3 - Range]
section: Channel 3
group: Channel
label: Range
datatype: DOUBLE
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
unit: V
set_cmd: SOUR3:VOLT
[Ch3 - Offset]
section: Channel 3
group: Channel
label: Offset
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR3:VOLT:OFFS
[Ch3 - Skew]
section: Channel 3
group: Channel
label: Skew
tooltip: Minimum step is 0.5 ps
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -2E-9
high_lim: 2E-9
set_cmd: SOUR3:SKEW
[Ch3 - DAC]
section: Channel 3
group: Channel
label: DAC resolution
datatype: COMBO
def_value: 16 bit DAC + 0 marker
combo_def_1: 12 bit DAC + 4 marker
combo_def_2: 13 bit DAC + 3 marker
combo_def_3: 14 bit DAC + 2 marker
combo_def_4: 15 bit DAC + 1 marker
combo_def_5: 16 bit DAC + 0 marker
cmd_def_1: 12
cmd_def_2: 13
cmd_def_3: 14
cmd_def_4: 15
cmd_def_5: 16
set_cmd: SOUR3:DAC:RES
[Ch 3]
section: Channel 3
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
show_in_measurement_dlg: True
[Ch3 - Marker 1 High]
section: Channel 3
group: Marker 1
label: Marker 1 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR3:MARK1:VOLT:HIGH
[Ch3 - Marker 1 Low]
section: Channel 3
group: Marker 1
label: Marker 1 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR3:MARK1:VOLT:LOW
[Ch3 - Marker 1 Delay]
section: Channel 3
group: Marker 1
label: Marker 1 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR3:MARK1:DEL
[Ch 3 - Marker 1]
section: Channel 3
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch3 - Marker 2 High]
section: Channel 3
group: Marker 2
label: Marker 2 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR3:MARK2:VOLT:HIGH
[Ch3 - Marker 2 Low]
section: Channel 3
group: Marker 2
label: Marker 2 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR3:MARK2:VOLT:LOW
[Ch3 - Marker 2 Delay]
section: Channel 3
group: Marker 2
label: Marker 2 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR3:MARK2:DEL
[Ch 3 - Marker 2]
section: Channel 3
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch3 - Marker 3 High]
section: Channel 3
group: Marker 3
label: Marker 3 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR3:MARK3:VOLT:HIGH
[Ch3 - Marker 3 Low]
section: Channel 3
group: Marker 3
label: Marker 3 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR3:MARK3:VOLT:LOW
[Ch3 - Marker 3 Delay]
section: Channel 3
group: Marker 3
label: Marker 3 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR3:MARK3:DEL
[Ch 3 - Marker 3]
section: Channel 3
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch3 - Marker 4 High]
section: Channel 3
group: Marker 4
label: Marker 4 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR3:MARK4:VOLT:HIGH
[Ch3 - Marker 4 Low]
section: Channel 3
group: Marker 4
label: Marker 4 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR3:MARK4:VOLT:LOW
[Ch3 - Marker 4 Delay]
section: Channel 3
group: Marker 4
label: Marker 4 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR3:MARK4:DEL
[Ch 3 - Marker 4]
section: Channel 3
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch4 - Output]
section: Channel 4
group: Channel
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: OUTP4
[Ch4 - Run mode]
section: Channel 4
group: Channel
label: Run mode
datatype: COMBO
def_value: Triggered
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Triggered Continuous
combo_def_4: Gated
cmd_def_1: CONT
cmd_def_2: TRIG
cmd_def_3: TCON
cmd_def_4: GAT
set_cmd: SOUR4:RMODE
[Ch4 - Trigger Source]
section: Channel 4
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
combo_def_3: Internal
cmd_def_1: ATR
cmd_def_2: BTR
cmd_def_3: ITR
set_cmd: SOUR4:TINP
state_quant: Ch4 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
[Ch4 - Trigger Source Gated]
section: Channel 4
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
cmd_def_1: ATR
cmd_def_2: BTR
set_cmd: SOUR4:TINP
state_quant: Ch4 - Run mode
state_value_1: Gated
[Ch4 - Range]
section: Channel 4
group: Channel
label: Range
datatype: DOUBLE
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
unit: V
set_cmd: SOUR4:VOLT
[Ch4 - Offset]
section: Channel 4
group: Channel
label: Offset
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR4:VOLT:OFFS
[Ch4 - Skew]
section: Channel 4
group: Channel
label: Skew
tooltip: Minimum step is 0.5 ps
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -2E-9
high_lim: 2E-9
set_cmd: SOUR4:SKEW
[Ch4 - DAC]
section: Channel 4
group: Channel
label: DAC resolution
datatype: COMBO
def_value: 16 bit DAC + 0 marker
combo_def_1: 12 bit DAC + 4 marker
combo_def_2: 13 bit DAC + 3 marker
combo_def_3: 14 bit DAC + 2 marker
combo_def_4: 15 bit DAC + 1 marker
combo_def_5: 16 bit DAC + 0 marker
cmd_def_1: 12
cmd_def_2: 13
cmd_def_3: 14
cmd_def_4: 15
cmd_def_5: 16
set_cmd: SOUR4:DAC:RES
[Ch 4]
section: Channel 4
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
show_in_measurement_dlg: True
[Ch4 - Marker 1 High]
section: Channel 4
group: Marker 1
label: Marker 1 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR4:MARK1:VOLT:HIGH
[Ch4 - Marker 1 Low]
section: Channel 4
group: Marker 1
label: Marker 1 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR4:MARK1:VOLT:LOW
[Ch4 - Marker 1 Delay]
section: Channel 4
group: Marker 1
label: Marker 1 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR4:MARK1:DEL
[Ch 4 - Marker 1]
section: Channel 4
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch4 - Marker 2 High]
section: Channel 4
group: Marker 2
label: Marker 2 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR4:MARK2:VOLT:HIGH
[Ch4 - Marker 2 Low]
section: Channel 4
group: Marker 2
label: Marker 2 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR4:MARK2:VOLT:LOW
[Ch4 - Marker 2 Delay]
section: Channel 4
group: Marker 2
label: Marker 2 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR4:MARK2:DEL
[Ch 4 - Marker 2]
section: Channel 4
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch4 - Marker 3 High]
section: Channel 4
group: Marker 3
label: Marker 3 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR4:MARK3:VOLT:HIGH
[Ch4 - Marker 3 Low]
section: Channel 4
group: Marker 3
label: Marker 3 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR4:MARK3:VOLT:LOW
[Ch4 - Marker 3 Delay]
section: Channel 4
group: Marker 3
label: Marker 3 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR4:MARK3:DEL
[Ch 4 - Marker 3]
section: Channel 4
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch4 - Marker 4 High]
section: Channel 4
group: Marker 4
label: Marker 4 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR4:MARK4:VOLT:HIGH
[Ch4 - Marker 4 Low]
section: Channel 4
group: Marker 4
label: Marker 4 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR4:MARK4:VOLT:LOW
[Ch4 - Marker 4 Delay]
section: Channel 4
group: Marker 4
label: Marker 4 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR4:MARK4:DEL
[Ch 4 - Marker 4]
section: Channel 4
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch5 - Output]
section: Channel 5
group: Channel
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: OUTP5
[Ch5 - Run mode]
section: Channel 5
group: Channel
label: Run mode
datatype: COMBO
def_value: Triggered
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Triggered Continuous
combo_def_4: Gated
cmd_def_1: CONT
cmd_def_2: TRIG
cmd_def_3: TCON
cmd_def_4: GAT
set_cmd: SOUR5:RMODE
[Ch5 - Trigger Source]
section: Channel 5
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
combo_def_3: Internal
cmd_def_1: ATR
cmd_def_2: BTR
cmd_def_3: ITR
set_cmd: SOUR5:TINP
state_quant: Ch5 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
[Ch5 - Trigger Source Gated]
section: Channel 5
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
cmd_def_1: ATR
cmd_def_2: BTR
set_cmd: SOUR5:TINP
state_quant: Ch5 - Run mode
state_value_1: Gated
[Ch5 - Range]
section: Channel 5
group: Channel
label: Range
datatype: DOUBLE
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
unit: V
set_cmd: SOUR5:VOLT
[Ch5 - Offset]
section: Channel 5
group: Channel
label: Offset
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR5:VOLT:OFFS
[Ch5 - Skew]
section: Channel 5
group: Channel
label: Skew
tooltip: Minimum step is 0.5 ps
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -2E-9
high_lim: 2E-9
set_cmd: SOUR5:SKEW
[Ch5 - DAC]
section: Channel 5
group: Channel
label: DAC resolution
datatype: COMBO
def_value: 16 bit DAC + 0 marker
combo_def_1: 12 bit DAC + 4 marker
combo_def_2: 13 bit DAC + 3 marker
combo_def_3: 14 bit DAC + 2 marker
combo_def_4: 15 bit DAC + 1 marker
combo_def_5: 16 bit DAC + 0 marker
cmd_def_1: 12
cmd_def_2: 13
cmd_def_3: 14
cmd_def_4: 15
cmd_def_5: 16
set_cmd: SOUR5:DAC:RES
[Ch 5]
section: Channel 5
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
show_in_measurement_dlg: True
[Ch5 - Marker 1 High]
section: Channel 5
group: Marker 1
label: Marker 1 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR5:MARK1:VOLT:HIGH
[Ch5 - Marker 1 Low]
section: Channel 5
group: Marker 1
label: Marker 1 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR5:MARK1:VOLT:LOW
[Ch5 - Marker 1 Delay]
section: Channel 5
group: Marker 1
label: Marker 1 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR5:MARK1:DEL
[Ch 5 - Marker 1]
section: Channel 5
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch5 - Marker 2 High]
section: Channel 5
group: Marker 2
label: Marker 2 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR5:MARK2:VOLT:HIGH
[Ch5 - Marker 2 Low]
section: Channel 5
group: Marker 2
label: Marker 2 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR5:MARK2:VOLT:LOW
[Ch5 - Marker 2 Delay]
section: Channel 5
group: Marker 2
label: Marker 2 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR5:MARK2:DEL
[Ch 5 - Marker 2]
section: Channel 5
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch5 - Marker 3 High]
section: Channel 5
group: Marker 3
label: Marker 3 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR5:MARK3:VOLT:HIGH
[Ch5 - Marker 3 Low]
section: Channel 5
group: Marker 3
label: Marker 3 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR5:MARK3:VOLT:LOW
[Ch5 - Marker 3 Delay]
section: Channel 5
group: Marker 3
label: Marker 3 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR5:MARK3:DEL
[Ch 5 - Marker 3]
section: Channel 5
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch5 - Marker 4 High]
section: Channel 5
group: Marker 4
label: Marker 4 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR5:MARK4:VOLT:HIGH
[Ch5 - Marker 4 Low]
section: Channel 5
group: Marker 4
label: Marker 4 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR5:MARK4:VOLT:LOW
[Ch5 - Marker 4 Delay]
section: Channel 5
group: Marker 4
label: Marker 4 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR5:MARK4:DEL
[Ch 5 - Marker 4]
section: Channel 5
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch6 - Output]
section: Channel 6
group: Channel
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: OUTP6
[Ch6 - Run mode]
section: Channel 6
group: Channel
label: Run mode
datatype: COMBO
def_value: Triggered
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Triggered Continuous
combo_def_4: Gated
cmd_def_1: CONT
cmd_def_2: TRIG
cmd_def_3: TCON
cmd_def_4: GAT
set_cmd: SOUR6:RMODE
[Ch6 - Trigger Source]
section: Channel 6
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
combo_def_3: Internal
cmd_def_1: ATR
cmd_def_2: BTR
cmd_def_3: ITR
set_cmd: SOUR6:TINP
state_quant: Ch6 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
[Ch6 - Trigger Source Gated]
section: Channel 6
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
cmd_def_1: ATR
cmd_def_2: BTR
set_cmd: SOUR6:TINP
state_quant: Ch6 - Run mode
state_value_1: Gated
[Ch6 - Range]
section: Channel 6
group: Channel
label: Range
datatype: DOUBLE
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
unit: V
set_cmd: SOUR6:VOLT
[Ch6 - Offset]
section: Channel 6
group: Channel
label: Offset
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR6:VOLT:OFFS
[Ch6 - Skew]
section: Channel 6
group: Channel
label: Skew
tooltip: Minimum step is 0.5 ps
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -2E-9
high_lim: 2E-9
set_cmd: SOUR6:SKEW
[Ch6 - DAC]
section: Channel 6
group: Channel
label: DAC resolution
datatype: COMBO
def_value: 16 bit DAC + 0 marker
combo_def_1: 12 bit DAC + 4 marker
combo_def_2: 13 bit DAC + 3 marker
combo_def_3: 14 bit DAC + 2 marker
combo_def_4: 15 bit DAC + 1 marker
combo_def_5: 16 bit DAC + 0 marker
cmd_def_1: 12
cmd_def_2: 13
cmd_def_3: 14
cmd_def_4: 15
cmd_def_5: 16
set_cmd: SOUR6:DAC:RES
[Ch 6]
section: Channel 6
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
show_in_measurement_dlg: True
[Ch6 - Marker 1 High]
section: Channel 6
group: Marker 1
label: Marker 1 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR6:MARK1:VOLT:HIGH
[Ch6 - Marker 1 Low]
section: Channel 6
group: Marker 1
label: Marker 1 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR6:MARK1:VOLT:LOW
[Ch6 - Marker 1 Delay]
section: Channel 6
group: Marker 1
label: Marker 1 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR6:MARK1:DEL
[Ch 6 - Marker 1]
section: Channel 6
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch6 - Marker 2 High]
section: Channel 6
group: Marker 2
label: Marker 2 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR6:MARK2:VOLT:HIGH
[Ch6 - Marker 2 Low]
section: Channel 6
group: Marker 2
label: Marker 2 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR6:MARK2:VOLT:LOW
[Ch6 - Marker 2 Delay]
section: Channel 6
group: Marker 2
label: Marker 2 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR6:MARK2:DEL
[Ch 6 - Marker 2]
section: Channel 6
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch6 - Marker 3 High]
section: Channel 6
group: Marker 3
label: Marker 3 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR6:MARK3:VOLT:HIGH
[Ch6 - Marker 3 Low]
section: Channel 6
group: Marker 3
label: Marker 3 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR6:MARK3:VOLT:LOW
[Ch6 - Marker 3 Delay]
section: Channel 6
group: Marker 3
label: Marker 3 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR6:MARK3:DEL
[Ch 6 - Marker 3]
section: Channel 6
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch6 - Marker 4 High]
section: Channel 6
group: Marker 4
label: Marker 4 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR6:MARK4:VOLT:HIGH
[Ch6 - Marker 4 Low]
section: Channel 6
group: Marker 4
label: Marker 4 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR6:MARK4:VOLT:LOW
[Ch6 - Marker 4 Delay]
section: Channel 6
group: Marker 4
label: Marker 4 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR6:MARK4:DEL
[Ch 6 - Marker 4]
section: Channel 6
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch7 - Output]
section: Channel 7
group: Channel
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: OUTP7
[Ch7 - Run mode]
section: Channel 7
group: Channel
label: Run mode
datatype: COMBO
def_value: Triggered
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Triggered Continuous
combo_def_4: Gated
cmd_def_1: CONT
cmd_def_2: TRIG
cmd_def_3: TCON
cmd_def_4: GAT
set_cmd: SOUR7:RMODE
[Ch7 - Trigger Source]
section: Channel 7
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
combo_def_3: Internal
cmd_def_1: ATR
cmd_def_2: BTR
cmd_def_3: ITR
set_cmd: SOUR7:TINP
state_quant: Ch7 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
[Ch7 - Trigger Source Gated]
section: Channel 7
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
cmd_def_1: ATR
cmd_def_2: BTR
set_cmd: SOUR7:TINP
state_quant: Ch7 - Run mode
state_value_1: Gated
[Ch7 - Range]
section: Channel 7
group: Channel
label: Range
datatype: DOUBLE
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
unit: V
set_cmd: SOUR7:VOLT
[Ch7 - Offset]
section: Channel 7
group: Channel
label: Offset
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR7:VOLT:OFFS
[Ch7 - Skew]
section: Channel 7
group: Channel
label: Skew
tooltip: Minimum step is 0.5 ps
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -2E-9
high_lim: 2E-9
set_cmd: SOUR7:SKEW
[Ch7 - DAC]
section: Channel 7
group: Channel
label: DAC resolution
datatype: COMBO
def_value: 16 bit DAC + 0 marker
combo_def_1: 12 bit DAC + 4 marker
combo_def_2: 13 bit DAC + 3 marker
combo_def_3: 14 bit DAC + 2 marker
combo_def_4: 15 bit DAC + 1 marker
combo_def_5: 16 bit DAC + 0 marker
cmd_def_1: 12
cmd_def_2: 13
cmd_def_3: 14
cmd_def_4: 15
cmd_def_5: 16
set_cmd: SOUR7:DAC:RES
[Ch 7]
section: Channel 7
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
show_in_measurement_dlg: True
[Ch7 - Marker 1 High]
section: Channel 7
group: Marker 1
label: Marker 1 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR7:MARK1:VOLT:HIGH
[Ch7 - Marker 1 Low]
section: Channel 7
group: Marker 1
label: Marker 1 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR7:MARK1:VOLT:LOW
[Ch7 - Marker 1 Delay]
section: Channel 7
group: Marker 1
label: Marker 1 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR7:MARK1:DEL
[Ch 7 - Marker 1]
section: Channel 7
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch7 - Marker 2 High]
section: Channel 7
group: Marker 2
label: Marker 2 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR7:MARK2:VOLT:HIGH
[Ch7 - Marker 2 Low]
section: Channel 7
group: Marker 2
label: Marker 2 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR7:MARK2:VOLT:LOW
[Ch7 - Marker 2 Delay]
section: Channel 7
group: Marker 2
label: Marker 2 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR7:MARK2:DEL
[Ch 7 - Marker 2]
section: Channel 7
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch7 - Marker 3 High]
section: Channel 7
group: Marker 3
label: Marker 3 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR7:MARK3:VOLT:HIGH
[Ch7 - Marker 3 Low]
section: Channel 7
group: Marker 3
label: Marker 3 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR7:MARK3:VOLT:LOW
[Ch7 - Marker 3 Delay]
section: Channel 7
group: Marker 3
label: Marker 3 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR7:MARK3:DEL
[Ch 7 - Marker 3]
section: Channel 7
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch7 - Marker 4 High]
section: Channel 7
group: Marker 4
label: Marker 4 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR7:MARK4:VOLT:HIGH
[Ch7 - Marker 4 Low]
section: Channel 7
group: Marker 4
label: Marker 4 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR7:MARK4:VOLT:LOW
[Ch7 - Marker 4 Delay]
section: Channel 7
group: Marker 4
label: Marker 4 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR7:MARK4:DEL
[Ch 7 - Marker 4]
section: Channel 7
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch8 - Output]
section: Channel 8
group: Channel
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: OUTP8
[Ch8 - Run mode]
section: Channel 8
group: Channel
label: Run mode
datatype: COMBO
def_value: Triggered
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Triggered Continuous
combo_def_4: Gated
cmd_def_1: CONT
cmd_def_2: TRIG
cmd_def_3: TCON
cmd_def_4: GAT
set_cmd: SOUR8:RMODE
[Ch8 - Trigger Source]
section: Channel 8
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
combo_def_3: Internal
cmd_def_1: ATR
cmd_def_2: BTR
cmd_def_3: ITR
set_cmd: SOUR8:TINP
state_quant: Ch8 - Run mode
state_value_1: Triggered
state_value_2: Triggered Continuous
[Ch8 - Trigger Source Gated]
section: Channel 8
group: Channel
label: Trigger Source
datatype: COMBO
def_value: A
combo_def_1: A
combo_def_2: B
cmd_def_1: ATR
cmd_def_2: BTR
set_cmd: SOUR8:TINP
state_quant: Ch8 - Run mode
state_value_1: Gated
[Ch8 - Range]
section: Channel 8
group: Channel
label: Range
datatype: DOUBLE
def_value: 0.5
low_lim: 0.025
high_lim: 0.75
unit: V
set_cmd: SOUR8:VOLT
[Ch8 - Offset]
section: Channel 8
group: Channel
label: Offset
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -2
high_lim: 2
set_cmd: :SOUR8:VOLT:OFFS
[Ch8 - Skew]
section: Channel 8
group: Channel
label: Skew
tooltip: Minimum step is 0.5 ps
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -2E-9
high_lim: 2E-9
set_cmd: SOUR8:SKEW
[Ch8 - DAC]
section: Channel 8
group: Channel
label: DAC resolution
datatype: COMBO
def_value: 16 bit DAC + 0 marker
combo_def_1: 12 bit DAC + 4 marker
combo_def_2: 13 bit DAC + 3 marker
combo_def_3: 14 bit DAC + 2 marker
combo_def_4: 15 bit DAC + 1 marker
combo_def_5: 16 bit DAC + 0 marker
cmd_def_1: 12
cmd_def_2: 13
cmd_def_3: 14
cmd_def_4: 15
cmd_def_5: 16
set_cmd: SOUR8:DAC:RES
[Ch 8]
section: Channel 8
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
show_in_measurement_dlg: True
[Ch8 - Marker 1 High]
section: Channel 8
group: Marker 1
label: Marker 1 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR8:MARK1:VOLT:HIGH
[Ch8 - Marker 1 Low]
section: Channel 8
group: Marker 1
label: Marker 1 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR8:MARK1:VOLT:LOW
[Ch8 - Marker 1 Delay]
section: Channel 8
group: Marker 1
label: Marker 1 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR8:MARK1:DEL
[Ch 8 - Marker 1]
section: Channel 8
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch8 - Marker 2 High]
section: Channel 8
group: Marker 2
label: Marker 2 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR8:MARK2:VOLT:HIGH
[Ch8 - Marker 2 Low]
section: Channel 8
group: Marker 2
label: Marker 2 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR8:MARK2:VOLT:LOW
[Ch8 - Marker 2 Delay]
section: Channel 8
group: Marker 2
label: Marker 2 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR8:MARK2:DEL
[Ch 8 - Marker 2]
section: Channel 8
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch8 - Marker 3 High]
section: Channel 8
group: Marker 3
label: Marker 3 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR8:MARK3:VOLT:HIGH
[Ch8 - Marker 3 Low]
section: Channel 8
group: Marker 3
label: Marker 3 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR8:MARK3:VOLT:LOW
[Ch8 - Marker 3 Delay]
section: Channel 8
group: Marker 3
label: Marker 3 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR8:MARK3:DEL
[Ch 8 - Marker 3]
section: Channel 8
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
[Ch8 - Marker 4 High]
section: Channel 8
group: Marker 4
label: Marker 4 High
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -0.3
high_lim: 1.75
set_cmd: SOUR8:MARK4:VOLT:HIGH
[Ch8 - Marker 4 Low]
section: Channel 8
group: Marker 4
label: Marker 4 Low
datatype: DOUBLE
unit: V
def_value: 0
low_lim: -0.5
high_lim: 1.55
set_cmd: SOUR8:MARK4:VOLT:LOW
[Ch8 - Marker 4 Delay]
section: Channel 8
group: Marker 4
label: Marker 4 Delay
datatype: DOUBLE
unit: s
def_value: 0
low_lim: -3E-9
high_lim: 3E-9
set_cmd: SOUR8:MARK4:DEL
[Ch 8 - Marker 4]
section: Channel 8
group: Output
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s